
macro "Settings Action Tool - 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" {
	Dialog.create("Settings");
	Dialog.addDirectory("Root folder", getDirectory("home"));
	Dialog.addString("Membranes folder", "membranes");
	Dialog.addString("Measures folder", "measures");
	Dialog.addFile("Classifier path", getDirectory("home"));
	Dialog.show();
	f = File.open(getDirectory("imagej") + File.separator + "fr-cnrs-mri-bacilles.txt");
	print(f, Dialog.getString());
	print(f, Dialog.getString());
	print(f, Dialog.getString());
	print(f, Dialog.getString());
}

macro "Segment Action Tool - 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" {
	print("Run segmentation");
	run("bacilli segment")
}

macro "Measure Action Tool - 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" {
	print("Run measures");
        run("bacilli measure");
}
