macro "Unpack images Action Tool - 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" {
	run("ami decapsulate x1");
}

macro "Extract channel Action Tool - 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" {
	run("ami extract channel");
}

macro "Recalibrate Action Tool - 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" {
	run("ami recalibrate");
}

macro "Intensity in nuclei Action Tool - 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" {
	run("ami measure intensities");
}

macro "Segment GAG Action Tool - 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" {
	run("ami segment protein");
}

macro "Quantify GAG Action Tool - C777L2232CdddD52CcccL62d2C111L2333C555D53C000L63d3CeeeL2434C333L2737C888D57C444L67d7C333L2838C888D58C444L68d8CbbbL2b3bC111L2c3cC555D5cC000L6cdcCaaaD2dCbbbD3dCdddD5dCcccL6ddd" {
	run("ami quantify gag");
}