/**
  * MRI Adipocyte Tools
  * 
  * The Adipocytes Tools help to analyze fat cells in images from histological sections.
  * 
  * (c) 2020, INSERM
  * written by Volker Baecker at Montpellier Ressources Imagerie, Biocampus Montpellier, INSERM, CNRS, University of Montpellier (www.mri.cnrs.fr)
  * 
  * in collaboration with Matthieu Lacroix and Patricia Cavelier
  */

var helpURL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/Adipocytes-Tools"

// Preprocessing options
var preMinSize = 80;
var preMaxSize = 20000;
var preThresholdMethod = "Percentile";
var preNumberOfDilates = 10;
var preRemoveScale = true;

// Simple segmentation options
var simpleMinSize = 40;
var simpleMaxSize = 6000;
var simpleThresholdMethod = "Huang";
var simpleUseBinaryWatershed = true;
var simpleFindEdges = true;
var simpleClearBackground = true;
var simpleRemoveScale = true

// Watershed segmentation options
var waterMinSize = 50;
var waterMaxSize = 20000;
var waterSigma = 4;
var waterFindEdges = true;
var waterClearBackground = true;
var waterRemoveScale = true;

// Large magnification segmentation options
var largeMinSize = 10000;
var largeMaxSize = "Infinity";
var largeRemoveScale = true;
var largeNumberOfErodes = 3;

// Internal variables to set and reset the colors
var oldForeground;
var oldBackground;

// run a function here:

exit();

// Main functions start

// <p> - preprocessing clear background
function preProcessImage() {
    roiManager("reset");
    storeColors();
    setWhiteOnBlack();
    if (preRemoveScale) run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
    clearBackground(preMinSize, preMaxSize, preThresholdMethod, preNumberOfDilates, false);
    resetColors();
    setBatchMode("exit and display");
    if (isOpen("Results")) {
		selectWindow("Results");
		run("Close");
    }
}

function clearBackground(minSize, maxSize, thresholdMethod,  numberOfDilates, keepSelection) {
	run("Duplicate...", " ");
    saveSettings();
    setOption("black background", false);
    title = getTitle();
    run("Find Edges");
    run("8-bit");
    run("Smooth");
    setAutoThreshold(thresholdMethod);
    run("Analyze Particles...", "size="+minSize+"-"+maxSize+" circularity=0.00-1.00 show=Masks exclude in_situ");
    run("Create Selection");
    run("Enlarge...", "enlarge=" + numberOfDilates + " pixel");
    roiManager("Add");
    close();
    roiManager("select", 0);
    run("Clear Outside");
    roiManager("reset");
    if (!keepSelection) run("Select None");
    restoreSettings();
}

// <s> - simple adipocytes segmentation
function simpleSegmentation() {
	run("Duplicate...", " ");
	run("ROI Manager...");
    roiManager("Show All with labels");
    setBatchMode(true);
    roiManager("reset");
    storeColors();
    setWhiteOnBlack();
    if (simpleRemoveScale) run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
    if (simpleUseBinaryWatershed && simpleClearBackground) clearBackground(preMinSize, preMaxSize, preThresholdMethod, preNumberOfDilates, true);
    if (simpleRemoveScale) run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
    if (simpleFindEdges) run("Find Edges");
    run("8-bit");
    if (simpleFindEdges) {
        run("Smooth");
        run("Invert");
    }
    setAutoThreshold(simpleThresholdMethod+ " dark");
    run("Convert to Mask");
    if (simpleUseBinaryWatershed) run("Watershed");
    run("Clear Results");
    run("Analyze Particles...", "size="+simpleMinSize+"-"+simpleMaxSize+" circularity=0.00-1.00 show=Nothing add exclude");
    close();
    if (simpleRemoveScale) run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
    resetColors();
    setBatchMode("exit and display");
    if (isOpen("Results")) {
	    selectWindow("Results");
	    run("Close");
   }
   roiManager("Show All with labels");
}

// <w> - watershed adipocytes segmentation
function watershedAdipocytesSegmentation() {
   run("Duplicate...", " ");	
   run("ROI Manager...");
   roiManager("Show All with labels");
   setBatchMode(true);
   roiManager("reset");
   storeColors();
   setWhiteOnBlack();
   if (waterRemoveScale) run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
   if (waterClearBackground) clearBackground(preMinSize, preMaxSize, preThresholdMethod, preNumberOfDilates, false);
   title = getTitle();
   if (waterRemoveScale) run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
   if (waterFindEdges) run("Find Edges");
   else  run("Invert");
   run("8-bit");
   run("Gaussian Blur...", "sigma=" + waterSigma);
   run("Watershed Algorithm");
   run("Invert");
   imageCalculator("AND create", title,"Watershed");
   titleResult = getTitle();
   selectImage("Watershed");
   close();
   selectImage(titleResult);
   setThreshold(1, 255);
   run("Convert to Mask");
   run("Clear Results");
   run("Analyze Particles...", "size="+waterMinSize+"-"+waterMaxSize+" circularity=0.00-1.00 show=Nothing add exclude");
   selectImage(titleResult); 
   close();
   close();
   if (waterRemoveScale) run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
   resetColors();
   setBatchMode("exit and display");
   if (isOpen("Results")) {
        selectWindow("Results");
        run("Close");
   }
   roiManager("Show All with labels");
}

// <l> - large magnification adipocytes segmentation
function largeMagnificationSegmentation() {
   run("Duplicate...", " ");	
   run("ROI Manager...");
   roiManager("Show All with labels");
   setBatchMode(true);
   roiManager("reset");
   storeColors();
   setWhiteOnBlack();
   if (largeRemoveScale) run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
   title = getTitle();
   
    run("Fit Polynomial", "x=2 y=2 mixed=1");
    run("8-bit");
    setAutoThreshold("Huang dark");
    setOption("BlackBackground", false);
    run("Convert to Mask");
    for (i=0; i<largeNumberOfErodes; i++) {
	    run("Erode");
    }
    run("Fill Holes");
    run("Create Selection");
    run("Crop");
    run("Select None");
    run("Analyze Particles...", "size="+largeMinSize+"-"+largeMaxSize+" exclude add");

   close();
   if (largeRemoveScale) run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
   resetColors();
   setBatchMode("exit and display");
   if (isOpen("Results")) {
        selectWindow("Results");
        run("Close");
   }
   roiManager("Show All with labels");
}
// Main functions end

// Macros tools
macro "Adipocytes Tools Help (f1) Action Tool - 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"{
	run('URL...', 'url='+helpURL);
}

macro "Preprocessing Clear Background (f2) Action Tool - C000T4b12p" {
	preProcessImage();
}

macro "Simple Adipocytes Segmentation (f3) Action Tool- C000T4b12s" {
	simpleSegmentation();
}

macro "Watershed Adipocytes Segmentation (f4) Action Tool- C000T4b12w" {
	watershedAdipocytesSegmentation();
}

macro "Large Magnification Adipocytes Segmentation (f5) Action Tool- C000T4b12l" {
	largeMagnificationSegmentation();
}

// Extras menu
   var extraCmds = newMenu("Extras Menu Tool",
      newArray("Download example image","Open help page"));
      
   macro "Extras Menu Tool - C000T4b12e" {
       cmd = getArgument();
       if (cmd=="Download example image")
           open("http://dev.mri.cnrs.fr/attachments/190/0178_x5_3.tif");
       else if (cmd=="Open help page")
           run('URL...', 'url='+helpURL);
   }

// keyboard shortcuts
macro 'Adipocytes Tools Help [f1]' {
	 run('URL...', 'url='+helpURL);
}

macro 'Preprocessing Clear Background [f2]' {
	preProcessImage();
}

macro 'Simple Adipocytes Segmentation [f3]' {
	simpleSegmentation();
}

macro 'Watershed Adipocytes Segmentation [f4]' {
	watershedAdipocytesSegmentation();
}

macro 'Large Magnification Adipocytes Segmentation [f5]' {
	largeMagnificationSegmentation();
}

// Option dialogs
macro "Preprocessing Clear Background (f2) Action Tool Options" {
        Dialog.create("Preprocessing Adipocytes Segmentation Options");
        Dialog.addNumber("min. size", preMinSize);	
        Dialog.addNumber("max. size", preMaxSize);
        Dialog.addNumber("nr. of dilates", preNumberOfDilates);
        Dialog.addChoice("thresholding method", newArray("Default", "Huang", "Intermodes", "IsoData", "IJ_IsoData", "Li", "MaxEntropy", "Mean", "MinError",  "Minimum", "Moments",  "Otsu", "Percentile", "RenyiEntropy", "Shanbhag", "Triangle", "Yen"),  preThresholdMethod);
        Dialog.addCheckbox("remove scale", preRemoveScale);
        Dialog.show();
        preMinSize = Dialog.getNumber();
        preMaxSize = Dialog.getNumber();
        preNumberOfDilates = Dialog.getNumber();
        preThresholdMethod = Dialog.getChoice();
        preRemoveScale = Dialog.getCheckbox();
}

macro "Simple Adipocytes Segmentation (f3) Action Tool Options" {
       Dialog.create("Simple Adipocytes Segmentation Options");
       Dialog.addNumber("min. size", simpleMinSize);	
       Dialog.addNumber("max. size", simpleMaxSize);
       Dialog.addChoice("thresholding method", newArray("Default", "Huang", "Intermodes", "IsoData", "IJ_IsoData", "Li", "MaxEntropy", "Mean", "MinError",  "Minimum", "Moments",  "Otsu", "Percentile", "RenyiEntropy", "Shanbhag", "Triangle", "Yen"),  simpleThresholdMethod);
       Dialog.addCheckbox("clear background", simpleClearBackground);
       Dialog.addCheckbox("find edges", simpleFindEdges);
       Dialog.addCheckbox("use binary watershed", simpleUseBinaryWatershed);
       Dialog.addCheckbox("remove scale", simpleRemoveScale);
       Dialog.show();
       simpleMinSize = Dialog.getNumber();
       simpleMaxSize = Dialog.getNumber();
       simpleThresholdMethod = Dialog.getChoice();
       simpleClearBackground = Dialog.getCheckbox();
       simpleFindEdges = Dialog.getCheckbox();
       simpleUseBinaryWatershed = Dialog.getCheckbox();
       simpleRemoveScale = Dialog.getCheckbox();
}

macro "Watershed Adipocytes Segmentation (f4) Action Tool Options" {
        Dialog.create("Watershed Adipocytes Segmentation Options");
        Dialog.addNumber("min. size", waterMinSize);	
        Dialog.addNumber("max. size", waterMaxSize);
        Dialog.addNumber("sigma", waterSigma);
        Dialog.addCheckbox("clear background", waterClearBackground);
        Dialog.addCheckbox("find edges", waterFindEdges);
        Dialog.addCheckbox("remove scale", waterRemoveScale);
        Dialog.show();
        waterMinSize = Dialog.getNumber();
        waterMaxSize = Dialog.getNumber();
        waterSigma = Dialog.getNumber();
        waterClearBackground = Dialog.getCheckbox();
        waterFindEdges = Dialog.getCheckbox();
        waterRemoveScale = Dialog.getCheckbox();
}

macro "Large Magnification Adipocytes Segmentation (f5) Action Tool Options" {
        Dialog.create("Large Magnification Adipocytes Segmentation Options");
        Dialog.addNumber("min. size", largeMinSize);	
        Dialog.addNumber("max. size", largeMaxSize);
        Dialog.addNumber("nr. of erodes", largeNumberOfErodes);
        Dialog.addCheckbox("remove scale", largeRemoveScale);
        Dialog.show();
        largeMinSize = Dialog.getNumber();
        largeMaxSize = Dialog.getNumber();
        largeNumberOfErodes = Dialog.getNumber();
        largeRemoveScale = Dialog.getCheckbox();
}

// helper functions
function storeColors() {
       oldForeground = getValue("color.foreground");
       oldBackground = getValue("color.background");
}

function setWhiteOnBlack() {
    setForegroundColor(255,255,255);
    setBackgroundColor(0,0,0);
}

function setBlackOnWhite() {
    setForegroundColor(0,0,0);
    setBackgroundColor(255,255,255);
}

function resetColors() {
    setForegroundColor((oldForeground>>16)&0xff, (oldForeground>>8)&0xff, oldForeground&0xff);
    setBackgroundColor((oldBackground>>16)&0xff, (oldBackground>>8)&0xff, oldBackground&0xff);
}
