/**
  * MRI Area of Axonal Projections Tools
  * 
  * Measure the area of the axonal projections relative to the zone they are in.
  *   
  * (c) 2019, INSERM
  * 
  * written by Volker Baecker at Montpellier Ressources Imagerie (www.mri.cnrs.fr)
 *
*/

var _METHODS = getList("threshold.methods");
var _STAININGS = newArray("H&E", "H&E 2","H DAB", "Feulgen Light Green", "Giemsa", "FastRed FastBlue DAB", "Methyl Green DAB", "H&E DAB", "H AEC","Azan-Mallory","Alcian blue & H","H PAS","RGB","CMY");
var _BROWN_CHANNEL = "Colour_2";
var _BLUE_CHANNEL = "Colour_1";
var _GREEN_CHANNEL = "Colour_3";
var _THRESHOLDING_METHOD_PROJECTIONS = "Yen";
var _TRESHOLDING_METHOD_ZONE = "MaxEntropy";
var _COLOR_VECTORS = "H DAB";
var _MIN_SIZE_ZONE = 1000000;
var _MIN_SIZE_PROJECTIONS = 500;
var _SIGMA_BLUR = 2;
var _CLOSE_RADIUS = 40;
var _TABLE_TITLE = "area of axonal projections";
var _EXLUCDE_ON_EDGES_ZONE = true;

var helpURL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/Area-of-Axonal-Projections-Tool";

macro "area of axonal projections tools help [f4]" {
	run('URL...', 'url='+helpURL);
}

macro "area of axonal projections tools help Action Tool (f4) - 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" {
	run('URL...', 'url='+helpURL);
}

macro "measure area of projections [f1]" {
	measureAreaOfAxonalProjections();
}

macro "measure area of projections Action Tool (f1) - C000T4b12m" {
	measureAreaOfAxonalProjections();
}


macro "measure area of projections Action Tool (f1) Options" {
	displayOptionsDialog();
}

function displayOptionsDialog() {
		Dialog.create("Measure area of projections Options");
	parts = split(_BLUE_CHANNEL,"_");
	blueChannelID = parts[1];
	parts = split(_BROWN_CHANNEL,"_");
	brownChannelID = parts[1];
	
	Dialog.addChoice("stainings", _STAININGS, _COLOR_VECTORS);
	
	Dialog.addNumber("detect zone in channel:", blueChannelID);
	Dialog.addChoice("thresholding method zone", _METHODS, _TRESHOLDING_METHOD_ZONE);
	Dialog.addNumber("min. size zone:", _MIN_SIZE_ZONE);
	Dialog.addNumber("sigma of Gaussian Blur filter:", _SIGMA_BLUR);
	Dialog.addNumber("radius of close:", _CLOSE_RADIUS);
	
	Dialog.addNumber("detect axonal projections in channel:", brownChannelID);
	Dialog.addChoice("thresholding method projections", _METHODS, _THRESHOLDING_METHOD_PROJECTIONS);
	Dialog.addNumber("min. size zone:", _MIN_SIZE_PROJECTIONS);
	
    Dialog.show();

	_COLOR_VECTORS = Dialog.getChoice();
	blueChannelID = Dialog.getNumber();
	_BLUE_CHANNEL = "Colour_" + blueChannelID;
	_TRESHOLDING_METHOD_ZONE = Dialog.getChoice();
	_MIN_SIZE_ZONE = Dialog.getNumber();
	_SIGMA_BLUR = Dialog.getNumber();
	_CLOSE_RADIUS = Dialog.getNumber();

	brownChannelID = Dialog.getNumber();
	_BROWN_CHANNEL = "Colour_" + brownChannelID;
	_THRESHOLDING_METHOD_PROJECTIONS = Dialog.getChoice();
	_MIN_SIZE_PROJECTIONS = Dialog.getNumber();

	greenChannelID = 6 - (blueChannelID + brownChannelID);
	_GREEN_CHANNEL = "Colour_" + greenChannelID;
}

function measureAreaOfAxonalProjections() {
	createTable(_TABLE_TITLE);
	run("Set Measurements...", "area limit display redirect=None decimal=3");
	title = getTitle();
	imageID = getImageID();
	brownTitle = title+"-("+_BROWN_CHANNEL+")";
	blueTitle = title+"-("+_BLUE_CHANNEL+")";
	greenTitle = title+"-("+_GREEN_CHANNEL+")";
	run("Colour Deconvolution", "vectors=["+_COLOR_VECTORS+"] hide");
	selectImage(greenTitle);
	close();
	selectImage(imageID);
	
	zoneArea = detectZone(imageID, blueTitle);
	selectImage(blueTitle);
	close();
	projectionsArea = detectProjections(imageID, brownTitle);

	report(_TABLE_TITLE, title, zoneArea, projectionsArea);
	run("Select None");
}

function detectZone(imageID, channelTitle) {
	run("Remove Overlay");
	run("Select None");
	selectImage(channelTitle);
	run("Duplicate...", " ");
	maskID = getImageID();
	run("Invert");
	run("Gaussian Blur...", "sigma="+_SIGMA_BLUR);
	setAutoThreshold(_TRESHOLDING_METHOD_ZONE + " dark");
	run("Convert to Mask");
	setAutoThreshold("Default");
	excludeText = "";
	if (_EXLUCDE_ON_EDGES_ZONE) excludeText = "exclude";
	run("Analyze Particles...", "size="+_MIN_SIZE_ZONE+"-Infinity show=Masks "+excludeText+" in_situ");
	run("Fill Holes");
	run("Options...", "iterations="+_CLOSE_RADIUS+" count=1 do=Close");
	run("Create Selection");
	getStatistics(area);
	selectImage(imageID);
	run("Restore Selection");
	Overlay.addSelection;
	Overlay.show;
	selectImage(maskID);
	close();
	return area;
}

function detectProjections(imageID, channelTitle) {
	selectImage(channelTitle);
	run("8-bit");
	channelID = getImageID();
	run("Restore Selection");
	getStatistics(area, mean);
	selectImage(channelTitle);
	run("Make Inverse");
	fillValue = round(mean);
	setColor(fillValue, fillValue, fillValue);
	selectImage(channelID);
	fill();
	run("Select None");
	setAutoThreshold(_THRESHOLDING_METHOD_PROJECTIONS);
	setOption("BlackBackground", false);
	run("Convert to Mask");
	run("Analyze Particles...", "size="+_MIN_SIZE_PROJECTIONS+"-Infinity show=Masks in_situ");
	setAutoThreshold("Default");
	run("Measure");
	areaProjections = getResult("Area", nResults-1);
	run("Create Selection");
	selectImage(imageID);
	run("Restore Selection");
	Overlay.addSelection("cyan");
	selectImage(channelTitle);
	close();
	return areaProjections;
}

function createTable(title) {
	if (!isOpen(title)) {
		Table.create(title);
	}
}

function report(tableTitle, inputImageTitle, areaZone, areaProjections) {
	ratio = areaProjections / areaZone;
	selectWindow(tableTitle);
	counter = Table.size;
	if (counter<0) counter=0;
	Table.update;	
	Table.set("image", counter, inputImageTitle);
	Table.set("area of the zone", counter, areaZone);
	Table.set("area of projections", counter, areaProjections);
	Table.set("ratio of areas", counter, ratio);
	Table.update;
}

function findBackground(radius, offset, iterations) {
	width = getWidth();
	height = getHeight();
	for(i=0; i<iterations; i++) {
    	getStatistics(area, mean, min, max, std, histogram); 
        minPlusOffset =  min + offset;
        currentMax = 0;
        for(x=0; x<width; x++) {
			for(y=0; y<height; y++) {
				intensity = getPixel(x,y);
				if (intensity<=minPlusOffset) {
				     value = getMaxIntensityAround(x, y, mean, radius, width, height);
				     if (value>currentMax) currentMax = value;	
				}
			}
        }
        result = currentMax / (i+1);
	}
	return result;
}

function getMaxIntensityAround(x, y, mean, radius, width, height) {
    max = 0;
    for(i=x-radius; i<=x+radius; i++) {
        if (i>=0 && i<width) {
               for(j=y-radius; j<=y+radius; j++) {
                      if (j>=0 && j<height) {
	    					value = getPixel(i,j);
                            if (value<mean && value>max)  max = value;
                      }
               }
        }
    }
    return max;
}

