/** 
 * Quantize the colors of an image to identify different clones using Brainbow like cell-labeling techniques.
 * 
 * (c) 2018, INSERM
 * written by Volker Baecker at Montpellier Ressources Imagerie (www.mri.cnrs.fr)
 * 
 */

var helpURL = "http://dev.mri.cnrs.fr/wiki/imagej-macros/MRI_Color_Quantization_Tools";
var _NUMBER_OF_COLORS = 16;
var _COLOR_SPACE = "HSB";
var _COLOR_SPACES = newArray("RGB", "YUV", "YCbCr", "YIQ", "HSB", "HSV", "HSL", "HMMD", "Lab", "Luv", "xyY", "XYZ", "KLT/PCA", "HCL");
var _METHOD = "Wu";
var _METHODS = newArray("Histogram", "Median Cut", "Wu");
var _USE_FULL_RANGE = true;

var _SUBTRACT_BACKGROUND_RADIUS = 1;
var _SUBTRACT_BACKGROUND_OFFSET = 1;
var _SUBTRACT_BACKGROUND_ITERATIONS = 2;
var _SUBTRACT_BACKGROUND_SKIP_LIMIT = 0.05;

macro "MRI Color Quantization Tools Help Action Tool - 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"{
    run('URL...', 'url='+helpURL);
}

macro "MRI Color Quantization Tools Help Action Tool Options"{
     Dialog.create("Color Quantization Tools Options");
	 Dialog.addNumber("Number of Colors: ", _NUMBER_OF_COLORS);
	 Dialog.addChoice("Color Space: ", _COLOR_SPACES, _COLOR_SPACE);
	 Dialog.addChoice("Method: ", _METHODS, _METHOD);
	 Dialog.addCheckbox("Use full range", _USE_FULL_RANGE);
	 Dialog.show();
	 _NUMBER_OF_COLORS = Dialog.getNumber();
	 _COLOR_SPACE = Dialog.getChoice();
	 _METHOD = Dialog.getChoice();
	 _USE_FULL_RANGE = Dialog.getCheckbox();
}

macro 'Quantize Colors [f1]'  {
	quantizeColors();
}

macro 'Quantize Colors Action Tool (f1) - C000T4b12q' {
	quantizeColors();
}

function quantizeColors() {
	macrosDir = getDirectory("macros");
	script = File.openAsString(macrosDir + "/toolsets/color_quantization_tools.py");
	colorSpaceNr = getIndex(_COLOR_SPACES, _COLOR_SPACE);
	parameter = "numberOfColors=" + _NUMBER_OF_COLORS +", colorSpace="+colorSpaceNr+", method=" + _METHOD;
	max = 65535;
	if (bitDepth()==8) max = 255;
	Stack.getDimensions(width, height, channels, slices, frames);
	for (i=1; i<=channels; i++) {
		Stack.setChannel(i)
		if (_USE_FULL_RANGE) setPixel(0,0,max);
		resetMinAndMax();
	}
	call("ij.plugin.Macro_Runner.runPython", script, parameter); 
	if (_NUMBER_OF_COLORS<256) run("8-bit Color", "number="+_NUMBER_OF_COLORS);
	getLut(reds, greens, blues);
	run("Grays");
	run("8-bit");
	reds = completeLUT(reds);
	greens = completeLUT(greens);
	blues = completeLUT(blues);
	setLut(reds, greens, blues);
}

function getIndex(array, value) {
	for (i=0; i<array.length; i++) {
		if (array[i]==value) return i;
	}
	return -1;
}

function completeLUT(array) {
	for (i=array.length; i<256; i++) {
		array = Array.concat(array, 0);
	}
	return array;
}

function indicesToStack() { 
	
}

function findAndSubtractBackground(radius, offset, iterations, skipLimit) {
   width = getWidth();
   height = getHeight();
   getStatistics(area, mean, min, max, std, histogram);
   ratio = histogram[0] / ((width * height) * 1.0);
   if (ratio>skipLimit) {
	run("HiLo");
	run("Enhance Contrast", "saturated=0.35");
	return;
   }
   for(i=0; i<iterations; i++) {
        getStatistics(area, mean, min, max, std, histogram); 
        minPlusOffset =  min + offset;
        currentMax = 0;
        for(x=0; x<width; x++) {
	for(y=0; y<height; y++) {
		intensity = getPixel(x,y);
		if (intensity<=minPlusOffset) {
		     value = getMaxIntensityAround(x, y, mean, radius, width, height);
		    if (value>currentMax) currentMax = value;	
		}
	}
        }
        result = currentMax / (i+1);
        run("Subtract...", "value=" + result);
    }
    run("HiLo");
    run("Enhance Contrast", "saturated=0.35");
}

function getMaxIntensityAround(x, y, mean, radius, width, height) {
    max = 0;
    for(i=x-radius; i<=x+radius; i++) {
        if (i>=0 && i<width) {
               for(j=y-radius; j<=y+radius; j++) {
                      if (j>=0 && j<height) {
	    value = getPixel(i,j);
                            if (value<mean && value>max)  max = value;
                      }
               }
        }
    }
    return max;
}
