/**
  * MRI Fibrosis quantification tool
  *
  * Measure the relative area of sirius red stained fibrosis.
  *
  * written 2015 by Volker Baecker (INSERM) at Montpellier RIO Imaging (www.mri.cnrs.fr)
*/


var vectors = newArray(
0.148,
0.772,
0.618,
0.462,
0.602,
0.651,
0.187,
0.523,
0.831
);

/*
var vectors = newArray(
0.035,
0.26,
0.965,
0.41,
0.207,
0.977,
0.067,
0.13,
0.989
);
*/

var r1 = vectors[0];
var g1 = vectors[1];
var b1 = vectors[2];
var r2 = vectors[3];
var g2 = vectors[4];
var b2 = vectors[5];
var r3 = vectors[6];
var g3 = vectors[7];
var b3 = vectors[8];

var _EXT = ".ndpi";
var _CONTROL_FOLDER = "control-images";
var _RESULTS_TABLE = "Fibrosis area";
var _REMOVE_SCALE = false;

var helpURL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/MRI_Fibrosis_Tool";

measureCurrentImage();
exit;

macro "MRI Fibrosis Tool Help [f1]" {
  showHelp();
}

macro "MRI Fibrosis Tool Help (f1) Action Tool - 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"{
  showHelp();
}

macro "measure image [f2]" {
   measureCurrentImage();
}


macro "Measure Image (f2) Action Tool - C037T4d14m"{
  measureCurrentImage();
}

macro "Measure Image (f2) Action Tool Options" {
	Dialog.create("Options of MRI Fibrosis Tool");
	Dialog.addNumber("red 1:", r1);
	Dialog.addNumber("green 1:", g1);
	Dialog.addNumber("blue 1:", b1);
	Dialog.addNumber("red 2:", r2);
	Dialog.addNumber("green 2:", g2);
	Dialog.addNumber("blue 2:", b2);
	Dialog.addNumber("red 3:", r3);
	Dialog.addNumber("green 3:", g3);
	Dialog.addNumber("blue 3:", b3);
	Dialog.addString("file ext.:", _EXT);
	Dialog.addCheckbox("remove scale", _REMOVE_SCALE);
	Dialog.show();
	r1 = Dialog.getNumber();
	g1 = Dialog.getNumber();
	b1 = Dialog.getNumber();
	r2 = Dialog.getNumber();
	g2 = Dialog.getNumber();
	b2 = Dialog.getNumber();
	r3 = Dialog.getNumber();
	g3 = Dialog.getNumber();
	b3 = Dialog.getNumber();
	_EXT = Dialog.getString();
	_REMOVE_SCALE = Dialog.getCheckbox();
}

macro "run batch [f3]" {
   measureCurrentImage();
}

macro "Run Batch (f3) Action Tool - C037T4d14b"{
  batchMeasureImages();
}

macro "Run Batch (f3) Action Tool Options" {
	Dialog.create("Options of MRI Fibrosis Batch Tool");
	Dialog.addString("control folder", _CONTROL_FOLDER);
	Dialog.addString("results table", _RESULTS_TABLE);
	Dialog.show();
	_CONTROL_FOLDER = Dialog.getString();
	_RESULTS_TABLE = Dialog.getString();
}

function measureCurrentImage() {
	if (selectionType()==-1) run("Select All"); 
	if (_REMOVE_SCALE) run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
	run("Set Measurements...", "area mean standard modal min display redirect=None decimal=3");
	getPixelSize(unit, pixelWidth, pixelHeight);
	run("RGB Color");
	run("Restore Selection");
	run("Clear Outside");
	run("Measure");
	run("Colour Deconvolution", "vectors=[User values] [r1]="+r1+" [g1]="+g1+" [b1]="+b1+" [r2]="+r2+" [g2]="+g2+" [b2]="+b2+" [r3]="+r3+" [g3]="+g3+" [b3]="+b3);
	close();
	close();
	setAutoThreshold("Default");
    getThreshold(lower, upper);
    setThreshold(1, upper);
	run("Create Selection");
	run("Set Scale...", "distance=1 known="+pixelWidth+" pixel=1 unit="+unit);
	run("Measure");
	close();
	close();
	run("Restore Selection");
	imageTitle = getTitle();
	parts = split(imageTitle, _EXT);
	imageTitle = parts[0];
	title = _RESULTS_TABLE;
  	handle = "["+_RESULTS_TABLE+"]";
	if (!isOpen(_RESULTS_TABLE)) {
 	    Table.create(title);
		Table.setLocationAndSize(100, 100 ,600, 400);
	    print(handle, "\\Headings:title\ttotal area\tfibrosis area\trelative fibrosis area");
	}
	totalArea = getResult("Area",  nResults-2);
	fibrosisArea = getResult("Area",  nResults-1);
	relativeFibrosisArea = fibrosisArea / totalArea;
	print(handle, imageTitle + "\t" + totalArea + "\t" + fibrosisArea + "\t" + relativeFibrosisArea);
}

function batchMeasureImages() {
	getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);
	startTimeStamp = "" + year + "-" + (month + 1)+"-"+dayOfMonth+"--"+hour+"."+minute+"."+second+"."+msec;
	handle = "["+_RESULTS_TABLE+"]";
	if (isOpen(_RESULTS_TABLE)) print(handle, "\\Clear");
	dir = getDirectory("Please select the input folder!");
	files = getFileList(dir);
	images = newArray();
	for(i=0; i<files.length; i++) {
		if (endsWith(files[i], ".tif")) images = Array.concat(images, files[i]);
	}
	File.makeDirectory(dir + _CONTROL_FOLDER);
	for (i=0; i<images.length; i++) {
		open(dir + images[i]);
		measureCurrentImage();
		saveAs("Tiff", dir + _CONTROL_FOLDER + "/" + images[i]);
		close();
		if (nImages>0) close();
	}
	selectWindow(_RESULTS_TABLE);
	saveAs("Text", dir + _RESULTS_TABLE + "-" + startTimeStamp + ".xls");
}

function showHelp() {
     run('URL...', 'url='+helpURL);
}
