/***
 * 
 * MRI Foci per nucleus tool
 * 
 * Detect and measure the foci per nucleus
 * 
 * (c) 2019, INSERM
 * 
 * written by Volker Baecker at Montpellier Ressources Imagerie (www.mri.cnrs.fr)
 * 
**/

var helpURL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/Foci-Per-Nucleus-Tool";
var	_SCALE_FACTOR = 5.0;
var	_MIN_SIZE = 1000;
var _THRESHOLDING_METHOD = "Huang";
var _THRESHOLDING_METHODS = getList("threshold.methods");
var _SIGMA_BLUR_FILTER = 12;
var _FOCI_THRESHOLDING_METHOD = "Otsu";
var _PROEMINENCE_OF_MAXIMA = 250;
var _THRESHOLD_1 = 10;
var _THRESHOLD_2 = 50;

measureFociPerNucleus();

exit();

macro "foci per nucleus tool help [f4]" {
	run('URL...', 'url='+helpURL);
}

macro "foci per nucleus tool help (f4) Action Tool - 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"{
	run('URL...', 'url='+helpURL);
}

macro "measure foci per nucleus [f5]" {
	measureFociPerNucleus();
}

macro "measure foci per nucleus (f5) Action Tool - C000T4b12m" {
	measureFociPerNucleus();
}

function reportResults() {
	run("Set Measurements...", "area mean standard min perimeter shape feret's integrated median display redirect=None decimal=3");
	Overlay.measure;
	if (!isOpen("Nuclei")) {
		Table.create("Nuclei");
	}
	startIndexNuclei = Table.size("Nuclei");
	if (!isOpen("Foci")) {
		Table.create("Foci");
	}
	startIndexFoci = Table.size("Foci");
	nrNuclei = 0;
	counter = 0;
	setBatchMode(true);
	for (i = 0; i < nResults; i++) {
		print("\\Update0: processing line " + (i+1) + " of " + nResults);
		label = Table.getString("Label", i, "Results");
		parts = split(label, ":");
		imageName = parts[0];
		object = parts[1];
		if (!startsWith(object, "N")) {
			area = getResult("Area", i);
			mean = getResult("Mean", i);
			stdDev = getResult("StdDev", i);
			intDen = getResult("IntDen", i);
			Table.set("Nr.", startIndexNuclei+i, nrNuclei+1, "Nuclei");
			Table.set("Image", startIndexNuclei+i, imageName, "Nuclei");
			Table.set("Area", startIndexNuclei+i, area, "Nuclei");
			Table.set("Mean", startIndexNuclei+i, mean, "Nuclei");
			Table.set("StdDev", startIndexNuclei+i, stdDev, "Nuclei");
			Table.set("IntDen", startIndexNuclei+i, intDen, "Nuclei");
			Table.update("Nuclei");
			nrNuclei++;
		} else {
			if (counter==0) {
				fociBelow = newArray(nrNuclei);
				fociBetween = newArray(nrNuclei);
				fociAbove = newArray(nrNuclei);
			}
			parts = split(object, "N");
			tmp = parts[0];
			parts = split(tmp, "F");			
			nucleus = parseInt(parts[0]);
			foci = parseInt(parts[1]);
			area = getResult("Area", i);
			mean = getResult("Mean", i);
			stdDev = getResult("StdDev", i);
			intDen = getResult("IntDen", i);
			row = Table.size("Foci");
			Table.set("Nr.", row, counter+1, "Foci");
			Table.set("Image", row, imageName, "Foci");
			Table.set("Nucleus", row, nucleus+1, "Foci");
			Table.set("Foci", row, foci+1, "Foci");
			Table.set("Area", row, area, "Foci");
			Table.set("Mean", row, mean, "Foci");
			Table.set("StdDev", row, stdDev, "Foci");
			Table.set("IntDen", row, intDen, "Foci");
			Table.update("Foci");
			if (area < _THRESHOLD_1) {
				fociBelow[nucleus] = fociBelow[nucleus] + 1;
			}
			if (area >= _THRESHOLD_1 && area < _THRESHOLD_2) {
				fociBetween[nucleus] = fociBetween[nucleus] + 1;
			} 
			if (area >= _THRESHOLD_2) {
				fociAbove[nucleus] = fociAbove[nucleus] + 1;
			}
			counter++;
		}
		//if (i%100==0) waitForUser("ok");
		if (i%1000==0) run("Collect Garbage");
	}
	for (i = 0; i < nrNuclei; i++) {
		Table.set("foci with area <"+ _THRESHOLD_1, startIndexNuclei+i, fociBelow[i], "Nuclei");
		Table.set("foci with "+ _THRESHOLD_1 +"<=area<"+  _THRESHOLD_2, startIndexNuclei+i, fociBetween[i], "Nuclei");
		Table.set("foci with area >="+ _THRESHOLD_2, startIndexNuclei+i, fociAbove[i], "Nuclei");
		Table.update("Nuclei");
	}
	setBatchMode(false);
}

function measureFociPerNucleus() {
	setForegroundColor(255,255,255);
	setBackgroundColor(0,0,0);
	roiManager("reset");
	inputImageID = getImageID();
	run("Remove Overlay");
	roiManager("reset");
	selectNuclei();
	run("From ROI Manager");
	roiManager("reset");
	subtractBlurredImage(_SIGMA_BLUR_FILTER);
	damsID = getImageID();
	run("Duplicate...", " ");
	maskID =getImageID();
	maskTitle = getTitle();
	setAutoThreshold(_FOCI_THRESHOLDING_METHOD + " dark");
	run("Convert to Mask");
	selectImage(damsID);
	run("Find Maxima...", "prominence="+_PROEMINENCE_OF_MAXIMA+" output=[Segmented Particles]");
	selectImage(damsID);
	close();
	damsID = getImageID();
	damsTitle = getTitle();
	imageCalculator("AND", maskTitle, damsTitle);
	selectImage(damsID);
	close();
	selectImage(inputImageID);
	size = Overlay.size;
	roiManager("reset");
	for (i = 0; i < size; i++) {
		selectImage(inputImageID);
		Overlay.activateSelection(i);
		selectImage(maskID);
		run("Select None");
		run("Duplicate...", " ");
		run("Restore Selection");
		setBackgroundColor(255,255,255);
		run("Clear Outside");
		setBackgroundColor(0,0,0);
		run("Analyze Particles...", "size=0-Infinity add");
		close();
		count = roiManager("count");
		for (r = 0; r < count; r++) {
			roiManager("select", r);
			roiManager("rename", "N"+IJ.pad(i, 3)+"F"+IJ.pad(r,3));
		}
		run("Select None");
		selectImage(inputImageID);
		roiManager("Show All without labels");
		run("From ROI Manager");
		roiManager("reset");
	}
	selectImage(maskID);
	close();
	reportResults();
}

function selectNuclei() {
	imageID = getImageID();
	run("Scale...", "x="+(1.0/_SCALE_FACTOR)+" y="+(1.0/_SCALE_FACTOR)+" interpolation=Bilinear create title=small_tmp");
	setAutoThreshold(_THRESHOLDING_METHOD + " dark");
	run("Convert to Mask");
	run("Fill Holes");
	run("Watershed");
	run("Scale...", "x="+_SCALE_FACTOR+" y="+_SCALE_FACTOR+" interpolation=Bilinear create title=big_tmp");
	setAutoThreshold(_THRESHOLDING_METHOD);
	roiManager("reset");
	run("Analyze Particles...", "size="+_MIN_SIZE+"-Infinity circularity=0.00-1.00 show=Nothing add exclude");
	selectWindow("small_tmp");
	close();
	selectWindow("big_tmp");
	close();
	selectImage(imageID);
	roiManager("Show All");
}

function subtractBlurredImage(sigma) {
	imageID = getImageID();
	imageTitle = getTitle();
	run("Duplicate...", " ");
	blurredID = getImageID();
	blurredTitle = getTitle();
	run("Gaussian Blur...", "sigma="+sigma);
	imageCalculator("Subtract create", imageTitle, blurredTitle);
	subtractedID = getImageID();
	selectImage(blurredID);
	close();
}
