/***
 * 
 * MRI Intensity per nucleus tool
 * 
 * Segment the nuclei in the Hoechst or Dapi channel and measure the intensities
 * for each nucleus in the remaining channels.
 * 
 * (c) 2019, INSERM
 * 
 * written by Volker Baecker at Montpellier Ressources Imagerie (www.mri.cnrs.fr)
 * 
**/

var helpURL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/Intensity-Per-Nucleus-Tool";
var _NUCLEI_CHANNELS = newArray("hoechst", "dapi");
var _NUCLEI_CHANNEL_NR = 0;
var	_SCALE_FACTOR = 5.0;
var	_MIN_SIZE = 50;
var _THRESHOLDING_METHOD = "Huang";
var _THRESHOLDING_METHODS = getList("threshold.methods");
var _FILE_EXT = "nd";
var _TABLES = newArray(0);

measureIntensityPerNucleus();
exit();

macro "intensity per nucleus tool help [f4]" {
	run('URL...', 'url='+helpURL);
}

macro "intensity per nucleus tool help (f4) Action Tool - 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"{
	run('URL...', 'url='+helpURL);
}

macro "measure intensity per nucleus [f5]" {
	measureIntensityPerNucleus();
}

macro "measure intensity per nucleus (f5) Action Tool - C000T4b12m" {
	measureIntensityPerNucleus();
}

macro "batch measure intensity (f6) Action Tool - C000T4b12b" {
	batchMeasureIntensity(_FILE_EXT);
}

macro "batch measure intensity [f6]" {
	batchMeasureIntensity(_FILE_EXT);
}

macro "measure intensity per nucleus (f5) Action Tool Options" {
	Dialog.create("measure intensity options");
	nucleiChannels = arrayToString(_NUCLEI_CHANNELS);
	Dialog.addString("nuclei channels: ", nucleiChannels);
	Dialog.addToSameRow();
	Dialog.addNumber("or nr. of nuclei channel (if 0, name will be used): ", _NUCLEI_CHANNEL_NR);
	Dialog.addNumber("scale factor: ", _SCALE_FACTOR);
	Dialog.addNumber("min. size: ", _MIN_SIZE);
	Dialog.addChoice("thresholding method: ", _THRESHOLDING_METHODS, _THRESHOLDING_METHOD);
	Dialog.show();
	nucleiChannels = Dialog.getString();
	_NUCLEI_CHANNELS = stringToArray(nucleiChannels);
	_NUCLEI_CHANNEL_NR = Dialog.getNumber();
	_SCALE_FACTOR = Dialog.getNumber();
	_MIN_SIZE = Dialog.getNumber();
	_THRESHOLDING_METHOD = Dialog.getChoice();
}

macro "batch measure intensity (f6) Action Tool Options" {
	Dialog.create("batch processing options");
	Dialog.addString("file ext.: ", _FILE_EXT);
	Dialog.show();
	_FILE_EXT = Dialog.getString();
}

function arrayToString(anArray) {
	aString = "";
	for (i = 0; i < anArray.length; i++) {
		aString = aString + anArray[i];
		if (i<anArray.length-1) aString = aString + ", ";
	}
	return aString;
}

function stringToArray(aString) {
	anArray = split(aString, ",");
	for (i = 0; i < anArray.length; i++) {
		anArray[i] = replace(anArray[i], " ", "");
	}
	return anArray;
}

function batchMeasureIntensity(fileExt) {
	print("\\Clear");
	print("batch measure intensities started...");
	_TABLES = newArray(0);
	dir = getDirectory("Choose the input folder!");
	processFolder(dir, dir, fileExt);
	Array.print(_TABLES);
	for (i = 0; i < _TABLES.length; i++) {
		table = _TABLES[i];
		selectWindow(table);
		saveAs("Results", dir + File.separator + table + ".xls");
	}
	print("batch measure intensities finished!");
	selectWindow("Log");
}

function measureIntensityPerNucleus() {
	run("Options...", "iterations=1 count=1 black");
	run("Clear Results");
	path = File.directory;
	filename = File.name;
		getDimensions(width, height, channels, slices, frames);
	if (_NUCLEI_CHANNEL_NR>0 && _NUCLEI_CHANNEL_NR<=channels) {
		indexOfNucleiChannel = _NUCLEI_CHANNEL_NR;
		channelNames = Array.getSequence(channels);²
	} else {
		channelNames = getChannelNames();	
		indexOfNucleiChannel = getIndexOfNucleiChannel(channelNames);
	}
	if (_NUCLEI_CHANNEL_NR>0 && _NUCLEI_CHANNEL_NR<=channels) {
		indicesOfChannelsToBeMeasured = newArray(0);
		for (i = 1; i <= channels; i++) {
			if (i!=_NUCLEI_CHANNEL_NR) indicesOfChannelsToBeMeasured = Array.concat(indicesOfChannelsToBeMeasured, i);
		}	
	} else {
		indicesOfChannelsToBeMeasured = getIndicesOfChannelsToBeMeasured(indexOfNucleiChannel, channelNames.length);
	}
	Stack.setChannel(indexOfNucleiChannel);
	run("Duplicate...", " ");
	selectNuclei();
	close();
	roiManager("Show All");
	for (i = 0; i < indicesOfChannelsToBeMeasured.length; i++) {
		run("Clear Results");
		Stack.setChannel(indicesOfChannelsToBeMeasured[i]);
		roiManager("Measure");
		selectWindow("Results");
		headings = split(Table.headings("Results"), "\t");
		for(c=1; c<headings.length; c++) {
			data = Table.getColumn(headings[c], "Results");
			newRows = false;
			if (c==1) newRows = true;
			channelString =  channelNames[indicesOfChannelsToBeMeasured[i]-1];
			addResultsColumnToTable(headings[c], data, "channel " + channelString, path, filename, newRows);
		}
	}
	run("Close");
}

function addResultsColumnToTable(columnName, data, tableName, path, filename, newRows) {
	if (isOpen(tableName)) {
		selectWindow(tableName);
	} else {
		Table.create(tableName);
		_TABLES = Array.concat(_TABLES,tableName);
		getLocationAndSize(x, y, width, height);
		Table.setLocationAndSize(x, y, 1100, 600, tableName);
	}
	Table.update;
	if (newRows) {
		rowIndex = Table.size(tableName);
	} else {
		rowIndex = Table.size(tableName) - data.length;
	}
	for (i = 0; i < data.length; i++) {
		if (newRows) {
			selectWindow(tableName);
			Table.set("path", rowIndex, path, tableName);
			Table.set("filename", rowIndex, filename, tableName);
			Table.set("nucleus nr.", rowIndex, i+1, tableName);
		}
		Table.set(columnName, rowIndex, data[i], tableName);
		Table.update(tableName);
		rowIndex++;
	}
	selectWindow("Results");
}

function selectNuclei() {
	imageID = getImageID();
	run("Scale...", "x="+(1.0/_SCALE_FACTOR)+" y="+(1.0/_SCALE_FACTOR)+" interpolation=Bilinear create title=small_tmp");
	setAutoThreshold(_THRESHOLDING_METHOD + " dark");
	run("Convert to Mask");
	run("Fill Holes");
	run("Watershed");
	run("Scale...", "x="+_SCALE_FACTOR+" y="+_SCALE_FACTOR+" interpolation=Bilinear create title=big_tmp");
	setAutoThreshold(_THRESHOLDING_METHOD + " dark");
	roiManager("reset");
	run("Analyze Particles...", "size="+_MIN_SIZE+"-Infinity circularity=0.00-1.00 show=Nothing add exclude");
	selectWindow("small_tmp");
	close();
	selectWindow("big_tmp");
	close();
	selectImage(imageID);
	roiManager("Show All");
}

function getChannelNames() {
	subtitle = getInfo("image.subtitle");
	parts = split(subtitle, ";");
	channelString = parts[0];
	parts = split(channelString, "-");
	channelString = parts[1];
	parts = split(channelString, ")");
	channelString = parts[0];
	channelString = replace(channelString, " ", "");
	channelNames = split(channelString, "/");
	return channelNames;
}

function getIndexOfNucleiChannel(channelNames) {
	for (i = 0; i < channelNames.length; i++) {
		channelName = channelNames[i];
		channelName = toLowerCase(channelName);
		if (contains(_NUCLEI_CHANNELS, channelName, true)) return i+1;
	}
	return -1;
}

function contains(aList, aString, ignoreCase) {
	searchString = aString;
	if (ignoreCase) searchString = toLowerCase(searchString);
	for (i = 0; i < aList.length; i++) {
		anElement = aList[i];
		if (ignoreCase) anElement = toLowerCase(anElement);
		if (anElement==aString) return true;
	}
	return false;
}

function getIndicesOfChannelsToBeMeasured(excludedChannel, nrOfChannels) {
	indices = newArray(0);
	for (i = 1; i <= nrOfChannels; i++) {
		if (i!=excludedChannel) indices = Array.concat(indices, i);
	}
	return indices;
}

// function to scan folders/subfolders/files to find files with correct suffix
function processFolder(input, output, fileExt) {
	list = getFileList(input);
	list = Array.sort(list);
	for (i = 0; i < list.length; i++) {
		if(File.isDirectory(input + File.separator + list[i]))
			processFolder(input + File.separator + list[i], output, fileExt);
		if(endsWith(toLowerCase(list[i]), toLowerCase(fileExt)))
			processFile(input, output, list[i]);
	}
}

function processFile(input, output, file) {
	path = input + File.separator + file;
	print("Processing: " + path);
	
	run("Bio-Formats", "open=["+path+"] autoscale color_mode=Composite rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT");
	measureIntensityPerNucleus();
	run("From ROI Manager");
	path = input + File.separator + "control";
	if (!File.exists(path)) File.makeDirectory(path);
	newFileName = replace(file, "."+_FILE_EXT, ".tif");
	saveAs("Tiff", path + File.separator + file);
	close();
}
