/**
  *  Kinetochore Analyzer
  *  --------------------
  *  Segment kinetochores in yeast cells and measure the co-occurence with a molecule
  *  in a different fluorescent channel.
  *   
  *  (c) 2026, INSERM, distributed under the MIT license
  *  
  *  written  by Volker Baecker (INSERM) at Montpellier RIO Imaging (https://www.mri.cnrs.fr/en/data-analysis.html)
  * 
  **
*/

var _URL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/Kinetochore-Analyzer"

macro "Kinetochore Analyzer Help Action Tool - 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" {
     run('URL...', 'url=' + _URL);
}

macro "Analyze Image (f5) Action Tool - C000T4b12i" {
    analyzeImage();
}

macro "Analyze Image (f5) Action Tool Options" {
    showAnalyzeImageOptions();
}

macro "Batch Analyze Images (f6) Action Tool - C000T4b12b" {
    batchAnalyzeImages();
}

macro "Batch Analyze Images (f6) Action Tool Options" {
    showBatchAnalyzeImagesOptions();
}

macro "Batch Analyze Images [f6]" {
    batchAnalyzeImages();
}


macro "Install or Update Action Tool - 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"{
    installOrUpdate();
}


function analyzeImage() {
    call("ij.Prefs.set", "mri.options.only", "false");   
    params = readOptionsAnalyzeImage();
    run("analyze kinetochores", params);   
}


function batchAnalyzeImages() {
    call("ij.Prefs.set", "mri.options.only", "false");   
    params = readOptionsBatchAnalyzeImages();
    run("batch analyze kinetochores", params); 
}


function showAnalyzeImageOptions() {
    call("ij.Prefs.set", "mri.options.only", "true");
    run("analyze kinetochores");
    call("ij.Prefs.set", "mri.options.only", "false");   
}


function showBatchAnalyzeImagesOptions() {
    call("ij.Prefs.set", "mri.options.only", "true");
    run("batch analyze kinetochores");
    call("ij.Prefs.set", "mri.options.only", "false");   
}

function getOptionsPathAnalyzeImage() {
    pluginsPath = getDirectory("plugins");
    optionsPath = pluginsPath + "kinetochore_analyzer/analyze_image_options.json";
    return optionsPath;
}


function getOptionsPathBatchAnalyzeImages() {
    pluginsPath = getDirectory("plugins");
    optionsPath = pluginsPath + "kinetochore_analyzer/batch_analyze_images_options.json";
    return optionsPath;
}

function readOptionsAnalyzeImage() {
    path = getOptionsPathAnalyzeImage();
    options = readOptions(path);
    return options;
}


function readOptionsBatchAnalyzeImages() {
    path = getOptionsPathBatchAnalyzeImages();
    options = readOptions(path);
    return options;
}

function readOptions(path) {
    if (!File.exists(path)) {
        return "";
    }
    text = File.openAsString(path);
    text = replace(text, "https:", "httpsD");
    text = replace(text, '\\:\\\\', '\\*\\\\');
    parts = split(text, '}');
    options = "";
    booleanOptions = "";
    for (i = 0; i < parts.length; i++) {    
        line = parts[i];
        if (line.length==0) continue;
        line = replace(line, '{', "");
        line = replace(line, '"', '');
        name = split(line, ":");
        name = replace(name[0], ", ", "");
        name = String.trim(name);
        if (name == "") continue;
        nameParts = split(name, " ");
        option = nameParts[0]; 
        params = substring(line, indexOf(line, ":"));
        params = replace(params, "\\[.*\\]", "choices");
        params = split(params, ",");        
        type = getOptionMetadata(params, "type");
        transient = getOptionMetadata(params, "transient");
        if (transient=='true') continue;
        value = getOptionMetadata(params, "value");
        if (type=='bool' && value=='true') {
            booleanOptions = booleanOptions + " " + option;
        }
        if (type=='int' || type=='float' || type=='str') {
            options = options + " " + option + "=" + value;
        }
        if (type=='str' || type=='choice' || type=='file' || type=='folder') {
            options = options + " " + option + "=[" + value + "]";
        }
    }
    options = options + booleanOptions;
    options = replace(options, "httpsD", "https:");
    options = replace(options, '\\*\\\\', '\\:\\\\');
    options = String.trim(options);
    return options;
}


function getOptionMetadata(params, name) {
    for (i=0; i<params.length; i++) {
        parts = split(params[i], ':');
        metadataName = String.trim(parts[0]);
        metadataValue = String.trim(parts[1]);
        if (metadataName == name) {
            return metadataValue;
        }
    }
    return ""
}


function installOrUpdate() {
    scriptsFolder = getDirectory("imagej") + "scripts/";
    if (File.exists(scriptsFolder + "mri_updater.py")) {
        print("Running the updater...");
        setToolInfo();
        run("mri updater");
        unsetToolInfo();
        installModels();
    } else {
        print("Installing the updater...");
        updateUpdater();
        print("Please restart FIJI and press the install/update button again!");
    }
}


function installModels() {

}


function setToolInfo() {
    call("ij.Prefs.set", "mri.update.tool", "kinetochores");
    call("ij.Prefs.set", "mri.update.folder", "kinetochore_analyzer");
    call("ij.Prefs.set", "mri.update.author", "volker");
}


function unsetToolInfo() {
    call("ij.Prefs.set", "mri.update.tool", "");
    call("ij.Prefs.set", "mri.update.folder", "");
    call("ij.Prefs.set", "mri.update.author", "");
}


function updateUpdater() {
    updaterContent = File.openUrlAsString("https://raw.githubusercontent.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/master/volker/scripts/mri_updater.py");
    scriptsFolder = getDirectory("imagej") + "scripts/";
    File.saveString(updaterContent, scriptsFolder + "mri_updater.py");
}