/**
 * Load Corresponding Images 
 * 
 * Opens for each image a second image with the same name from another folder and displays the two images next to each other.
 * 
 * (c) INSERM 2019
 * 
 * written 2019 by Volker Baecker (INSERM) at Montpellier Ressources Imagerie (www.mri.cnrs.fr)
 * 
**/

var helpURL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/Load-Corresponding-Images";
var DIRECTORY1 = "";
var DIRECTORY2 = "";
var FILES = newArray(0);
var EXT = "tif";
var VIEW_OPTION = "Hyperstack";
var currentFile = 0;
var IMAGE_A = "";
var IMAGE_B = "";
var CLOSE_LAST_IMAGES = true;
var FILTER_BY_CHOICES = newArray("none", "filename contains", "filename does not contain");
var FILTER_BY  = FILTER_BY_CHOICES[2];
var FILTER_STRING = "DNA";
var BORDER_PERCENT = 5;

macro "Load Corresponding Images Help [f1]" {
   showHelp();
} 

macro "Set Folders [f2]" {
	setFolders();	
}

macro "First Image [f3]" {
     firstImageAction();
}

macro "Previous Image [f4]" {
    previousImageAction();
}

macro "Next Image [f5]" {
    nextImageAction();
}

macro "Last Image [f6]" {
    lastImageAction();
}

macro "Reload Image [f7]" {
    reloadImageAction();
}

macro "Combine Images [f9]" {
	combineImages();
}

macro "Load Corresponding Images Help (f1) Action Tool - C000T4b12?"{
   showHelp();
}

macro "Set Folders (f2) Action Tool - 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"{
	setFolders();
}

macro "Set Folders (f2) Action Tool Options" {
    showIOSettings();
}

macro "First Image (f3) Action Tool - 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"{
      firstImageAction();
}

macro "First Image (f3) Action Tool Options" {
    showIOSettings();
}

macro "Previous Image (f4) Action Tool - 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"{
      previousImageAction();
}


macro "Previous Image (f4) Action Tool Options" {
       showIOSettings();
}

macro "Next Image (f5) Action Tool - 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"{
      nextImageAction();
}

macro "Last Image (f6) Action Tool - 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"{
     lastImageAction();
}

macro "Last Image (f6) Action Tool Options" {
       showIOSettings();
}

macro "Reload Image (f7) Action Tool - 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"{
     reloadImageAction();
}

macro "Reload Image (f7) Action Tool Options" {
      showIOSettings();
}

macro "Open File [f8]" {
	openFile();
}

macro "Open File (f8) Action Tool - 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"{
	openFile();
}

macro "Open File (f8) Action Tool Options" {
    showIOSettings();
}

macro "Combine Images (f9) Action Tool - C000T4b12c"{
	combineImages();	
}


macro "Combine Images (f9) Action Tool Options"{
	showIOSettings();
}

function combineImages() {
	dir = DIRECTORY1 + "/COMBINED";
	File.makeDirectory(dir);
	setBatchMode(true);
	for (i = 0; i < FILES.length; i++) {
		showProgress(i, FILES.length-1);
		file = FILES[i];
    	run("Bio-Formats Importer", "open=["+DIRECTORY1+"/"+file+"] color_mode=Default view=["+VIEW_OPTION+"] stack_order=XYCZT");
    	enhanceDisplay();
    	rename("a"+file);
    	width = getWidth();
    	height = getHeight();
    	aID = getImageID();
    	run("Bio-Formats Importer", "open=["+DIRECTORY2+"/"+file+"] view=["+VIEW_OPTION+"]");
    	enhanceDisplay();
    	rename("b"+file);
    	bID = getImageID();
    	if (BORDER_PERCENT>0) {
    		newWidth = width + (width * BORDER_PERCENT) / 100;
    		newHeight = height + (height * BORDER_PERCENT) / 100; 
    		selectImage(aID);
    		run("Canvas Size...", "width="+newWidth+" height="+newHeight+" position=Center zero");
    		selectImage(bID);
    		run("Canvas Size...", "width="+newWidth+" height="+newHeight+" position=Center zero");
    	}
    	run("Combine...", "stack1=a"+file+" stack2=b"+file);
    	rename(file);
    	saveAs("tiff", dir+"/"+file);
    	close();
	}
	setBatchMode(false);
}

function showIOSettings() {
     Dialog.create("Load Corresponding Images Options");
     if (FILES.length<1) message = "No current image. Please set the input folders!";
     else message = "Image " + (currentFile + 1) + " of " + FILES.length;
     Dialog.addMessage(message);
	 Dialog.addString("File extension: ", EXT);
	 Dialog.addCheckbox("Close last pair of images", CLOSE_LAST_IMAGES);
	 Dialog.addChoice("Filter by: ", FILTER_BY_CHOICES, FILTER_BY);
	 Dialog.addString("Substring: ", FILTER_STRING);
	 Dialog.addNumber("% border: ", BORDER_PERCENT);
 	 Dialog.show();
 	 EXT = Dialog.getString();
 	 CLOSE_LAST_IMAGES = Dialog.getCheckbox();
 	 FILTER_BY = Dialog.getChoice();
 	 FILTER_STRING = Dialog.getString();
 	 BORDER_PERCENT = Dialog.getNumber();
}

function getFiles() {
     list = getFileList(DIRECTORY1);
     if (FILTER_BY!=FILTER_BY_CHOICES[0]) list = filterList(list);
     FILES = newArray(0);
     for (i=0; i<list.length; i++) {
     	file = list[i];
     	if (endsWith(file, "."+EXT)) {
     		FILES = Array.concat(FILES, file);
     	}
     }
     return FILES;
}

function filterList(list) {
	filteredList = newArray();
	for (i = 0; i < list.length; i++) {
		filename = list[i];
		included = (indexOf(filename, FILTER_STRING) >= 0);
		if (FILTER_BY == FILTER_BY_CHOICES[2]) included = !included;
		if (included) filteredList = Array.concat(filteredList, filename);
	}
	return filteredList;
}

function setFolders() {
	currentFile = 0;
	DIRECTORY1 = getDirectory("Choose folder A: ");
	DIRECTORY2 = getDirectory("Choose folder B: ");
	getFiles();
	loadCurrentImage();
}

function loadCurrentImage() {
    if (nImages>0 && CLOSE_LAST_IMAGES) {
    	if (isOpen(IMAGE_A)) {
    		selectImage(IMAGE_A);
    		close();
    	}
    	if (isOpen(IMAGE_B)) {
    		selectImage(IMAGE_B);
    		close();
    	}
    }
    if (FILES.length<1) return;
    file = FILES[currentFile];
    run("Bio-Formats Importer", "open=["+DIRECTORY1+"/"+file+"] color_mode=Default view=["+VIEW_OPTION+"] stack_order=XYCZT");
    enhanceDisplay();
    IMAGE_A = getImageID();
    run("Bio-Formats Importer", "open=["+DIRECTORY2+"/"+file+"] view=["+VIEW_OPTION+"]");
    enhanceDisplay();
    IMAGE_B = getImageID();
    run("Tile");
}

function enhanceDisplay() {
    Stack.getDimensions(width, height, channels, slices, frames)
    if (channels==1)
    	run("Enhance Contrast", "saturated=0.35");
    else { 
	    for (i=1; i<=channels; i++) {
	           Stack.setChannel(i);
	           run("Enhance Contrast", "saturated=0.35");
	    }
	    Stack.setChannel(1);
    }
}

function showImageStatus() {
      showStatus("Image " + (currentFile+1) + " of " + FILES.length);
}

function showHelp() {
    run('URL...', 'url='+helpURL);
}

function firstImageAction() {
      if (FILES.length>0) {
               if (currentFile!=0) {
                    currentFile = 0;
                    loadCurrentImage();
               }
      }
     showImageStatus();
} 

function previousImageAction() {
      if (FILES.length>0) {
             if (currentFile!=0) {
                   if (currentFile>0) currentFile--;
                   else currentFile=0;
                   loadCurrentImage();
            }
      }
      showImageStatus();
}

function nextImageAction() {
      if (FILES.length>0) {
               if (currentFile!=FILES.length-1) {
                   if (currentFile<FILES.length-1) currentFile++;
                   else currentFile = FILES.length-1;
                   loadCurrentImage();
              }
      }
      showImageStatus();
}

function lastImageAction() {
      if (FILES.length>0) {
               if (currentFile!=FILES.length-1) {
                   currentFile = FILES.length-1;
                   loadCurrentImage();
               }
      }
      showImageStatus();
}

function reloadImageAction() {
        if (FILES.length>0) {
        	if (currentFile<0 || currentFile>=FILES.length) currentFile = 0;
                        loadCurrentImage();
         }	
         showImageStatus();
}

function openFile() {
	path = File.openDialog("Choose a file!");
	dir = File.getParent(path) + File.separator;
	file = File.getName(path);
	if (!((dir==DIRECTORY1) || (dir==DIRECTORY2))) return;
	index = -1;
	for (i=0; i< FILES.length; i++) {
		current = FILES[i];
		if (current == file) {
			index = i;
		}
	}
	if (index<0) return;
	currentFile = index;
	reloadImageAction();
}
