var NUCLEI_CHANNEL = 1;
var SIGNAL_CHANNEL = 2;
var NUCLEUS_MIN_AREA = 50;
var LABEL = 1;
var NR_OF_ZOOM_OUT = 4;
var FILE_EXTENSION = "tif";

URL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/Measure-Intensity-Without-Spots";


macro "Measure Intensity Without Spots Help Action Tool - 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" {
    run('URL...', 'url='+_URL);
}


macro "Convert bioformats wells to tif series (f1) Action Tool - C000T8b12c" {
    convertWells()
}


macro "Convert bioformats wells to tif series [F1]" {
    convertWells()
}


macro "Remove Background (f2) Action Tool - C000T8b12r" {
    removeBackground();
}


macro "Remove Background [f2]" {
    removeBackground();
}


macro "Measure Image (f3) Action Tool - C000T4b12m" {
    measureImage();
}


macro "measure image [F3]" {
    measureImage();
}


macro "Measure Image (f3) Action Tool Options" {
    showMeasureIntensityOptions();
}


macro "Jump To Selected Label (f4) Action Tool - C000T8b12j" {
    jumpToSelectedLabel();
}


macro "Jump To Selected Label (f4) Action Tool Options" {
    showJumpToSeletedLabelOptions();
}


macro "jump to selected label [F4]" {
    jumpToSelectedLabel();
}


macro "Batch Remove Background (f5) Action Tool - C000T4b12bC000Tcb12r" {
    batchRemoveBackground();
}


macro "Batch Remove Background [f5]" {
    removeBackground();
}


function removeBackground() {   
    run("remove background");
}


function convertWells() {
    run("export wells");
}


function showMeasureIntensityOptions() {
    call("ij.Prefs.set", "mri.options.only", "true");
    run("measure without spots");
    call("ij.Prefs.set", "mri.options.only", "false");  
}


function showJumpToSeletedLabelOptions() {
    call("ij.Prefs.set", "mri.options.only", "true");
    run("jump to label");
    call("ij.Prefs.set", "mri.options.only", "false");  
}


function measureImage() {
    call("ij.Prefs.set", "mri.options.only", "false");   
    if (File.exists(getOptionsPathMeasureIntensity())) {
        options = loadOptions(getOptionsPathMeasureIntensity());
        run("measure without spots", options);
    } else {
        run("measure without spots");
    }      
}


function getOptionsPathMeasureIntensity() {
    pluginsPath = getDirectory("plugins");
    optionsPath = pluginsPath + "Measure-Intensity-Without-Spots/mws-options.txt";
    return optionsPath;
}


function loadOptions(path) {
    optionsString = File.openAsString(path);
    optionsString = replace(optionsString, "\n", "");
    return optionsString;  
}


function jumpToSelectedLabel() {
    call("ij.Prefs.set", "mri.options.only", "false");   
    row = Table.getSelectionStart;
    col = Table.getColumn("Label"); 
    label =col[row];
    zoom = NR_OF_ZOOM_OUT;
    pluginsPath = getDirectory("plugins");
    path = pluginsPath + "Measure-Intensity-Without-Spots/jtl-options.txt";
    if (File.exists(path)) {
        optionsString = File.openAsString(path);    
        parts = split(optionsString, " ");
        parts = split(parts[1], "=");
        zoomTxt = parts[1];
        zoom = zoomTxt.trim();
    }
    options = "label=" + label + " zoom=" + zoom;
    run("jump to label", options);
}


function batchRemoveBackground() {
    directory = getDir("Please select the input images!");
    outFolder = directory + "corrected" + File.separator;
    if (!File.exists(outFolder)) {
        File.makeDirectory(outFolder);
    }
    files = getFileList(directory);
    images = filterImages(files);
    for (i = 0; i < images.length; i++) {
        imagePath = directory + images[i];
        open(imagePath);
        removeBackground();
        Stack.getDimensions(width, height, channels, slices, frames);
        for (s = 1; s <= slices; s++) {
            run("Duplicate...", "duplicate slices=" + s);
            baseName = File.getNameWithoutExtension(images[i]);
            save(outFolder + baseName + "s=" + s + ".tif");
            close();
        }
        close();
    }
}


function filterImages(files) {
    images = newArray(0);
    for (i = 0; i < files.length; i++) {
        file = files[i];
        if (!endsWith(toLowerCase(file), toLowerCase(FILE_EXTENSION))) continue;
        images = Array.concat(images, file);
    }
    return images;
}
