var _SIGMA = 3;
var _MIN_PROMINENCE = newArray(30, 20);
var _COLORS=newArray("red", "green");
var _STYLE=newArray("circle", "circle");
var _STYLES = newArray('hybrd', 'cross', 'dot', 'circle');
var _SIZE=newArray("large", "extra large");
var _SIZES=newArray('tiny', 'small', 'medium', 'large', 'extra large');
var _MAX_RADIUS = 2;

var helpURL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/MRI_Spot_Coloc_Tool"

macro "detect spots help (f1) Action Tool - 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" {
	 run('URL...', 'url='+helpURL);
}

macro "detect spots help [f1]" {
	 run('URL...', 'url='+helpURL);
}	

macro "detect spots (f2) Action Tool - C000T4b12d" {
	detectSpots(_MIN_PROMINENCE, _COLORS, _STYLE, _SIZE);
}


macro "detect spots (f2) Action Tool Options" {
	Dialog.create("detect spots options");

	Dialog.addMessage("Spot detection and coloc");
	Dialog.addNumber("sigma LoG filter: ", _SIGMA);
	Dialog.addNumber(_COLORS[0]+" min. proeminence: ",  _MIN_PROMINENCE[0]);
	Dialog.addNumber(_COLORS[1]+" min. proeminence: ",  _MIN_PROMINENCE[1]);
	Dialog.addNumber("max. radius: ", _MAX_RADIUS);
	Dialog.addMessage("Display");
	Dialog.addChoice(_COLORS[0]+" style: ", _STYLES, _STYLE[0]);
	Dialog.addChoice(_COLORS[1]+" style: ", _STYLES, _STYLE[1]);
	Dialog.addChoice(_COLORS[0]+" size: ", _SIZES, _SIZE[0]);
	Dialog.addChoice(_COLORS[1]+" size: ", _SIZES, _SIZE[1]);
	
	Dialog.show();
	
	_SIGMA = Dialog.getNumber();
	_MIN_PROMINENCE[0] = Dialog.getNumber();
	_MIN_PROMINENCE[1] = Dialog.getNumber();
	_MAX_RADIUS = Dialog.getNumber();
	_STYLE[0] = Dialog.getChoice();
	_STYLE[1] = Dialog.getChoice();
	_SIZE[0] = Dialog.getChoice();
	_SIZE[1] = Dialog.getChoice();
}

macro "detectSpots" [f2]" {
	detectSpots(_MIN_PROMINENCE, _COLORS, _STYLE, _SIZE);
}

function detectSpots(minProminence, colors, style, size) {
	Overlay.remove;
	inputImageID = getImageID();
	run("FeatureJ Laplacian", "compute smoothing="+_SIGMA);
	pointsImageID = getImageID();
	Stack.getDimensions(width, height, channels, slices, frames);
	for (t = 1; t <= frames; t++) {
		for (c = 1; c <= channels; c++) {
			selectImage(pointsImageID);
			Stack.setChannel(c);
			Stack.setFrame(t);
			run("Find Maxima...", "prominence="+minProminence[c-1] +" strict exclude light output=[Point Selection]");
			getSelectionCoordinates(xpoints, ypoints);
			selectImage(inputImageID);
			type = "point " + size[c-1] + " " + colors[c-1] + " " + style[c-1];
			makeSelection(type, xpoints, ypoints);
			Overlay.addSelection
			Overlay.setPosition(0, 0, t);
		}
	}	
	selectImage(pointsImageID);	
	close();
	run("Select None");
	linkSpots();
}

function linkSpots() {
	currentID = 1;
	setBatchMode(true);	// move up again for efficiency
	Stack.getDimensions(width, height, channels, slices, frames);
	inputImageID = getImageID();
	newImage("map", "16-bit", width, height, channels, slices, frames);
	map = getImageID();
	selectImage(inputImageID);
	numberOfSelections = Overlay.size;
	Table.create("intensity per time");
	timePoints = Array.getSequence(frames);
	Table.setColumn("frame", timePoints, "intensity per time");
	for (i = 0; i < numberOfSelections; i++) {
		selectImage(inputImageID);
		Overlay.activateSelection(i);
		Roi.getPosition(currentChannel, currentSlice, currentFrame);
		color = Roi.getStrokeColor;
		getSelectionCoordinates(xpoints1, ypoints1);
		run("Select None");
		for (j = 0; j < xpoints1.length; j++) {
			selectImageChannelAndFrame(map, color, currentFrame);
			makeRectangle(xpoints1[j]-_MAX_RADIUS, ypoints1[j]-_MAX_RADIUS, 2*_MAX_RADIUS+1, 2*_MAX_RADIUS+1);
			id = getIDFor(xpoints1[j], ypoints1[j], currentChannel, currentFrame);
			if (id==-1) id = currentID++;
			setColor(id);
			run("Fill", "slice");	
			selectImageChannelAndFrame(inputImageID, color, currentFrame);
			makeRectangle(xpoints1[j]-_MAX_RADIUS, ypoints1[j]-_MAX_RADIUS, 2*_MAX_RADIUS+1, 2*_MAX_RADIUS+1);
			getStatistics(area, mean, min, max, std, histogram);
			Table.set(id, currentFrame-1, mean, "intensity per time");
		}
	}
	Table.update("intensity per time");
	Table.create("coloc per frame");
	Table.setColumn("frame", timePoints, "coloc per frame");
	for (i = 0; i < numberOfSelections; i++) {
		selectImage(inputImageID);
		Overlay.activateSelection(i);
		Roi.getPosition(currentChannel, currentSlice, currentFrame);
		color = Roi.getStrokeColor;
		getSelectionCoordinates(xpoints1, ypoints1);
		run("Select None");
		redSpots = 0;
		greenSpots = 0;
		coveredByOther = 0;
		if (color==_COLORS[0]) 
			redSpots = xpoints1.length;
		else 
			greenSpots = xpoints1.length;
		for (j = 0; j < xpoints1.length; j++) {
			otherColor = _COLORS[0];
			if (color==_COLORS[0]) otherColor = _COLORS[1];
			selectImageChannelAndFrame(map, otherColor, currentFrame);
			makeRectangle(xpoints1[j]-_MAX_RADIUS, ypoints1[j]-_MAX_RADIUS, 2*_MAX_RADIUS+1, 2*_MAX_RADIUS+1);
			getStatistics(area, mean);
			if(mean>0) coveredByOther++;
		}
		if (color==_COLORS[0]) {
			Table.set(_COLORS[0] + " spots", currentFrame-1, redSpots, "coloc per frame");
		} else {
			Table.set(_COLORS[1] + " spots", currentFrame-1, greenSpots, "coloc per frame");
			Table.set("colocalized", currentFrame-1, coveredByOther, "coloc per frame");
		}
	}
	run("Select None");
	Stack.setChannel(2);
	resetMinAndMax();
	Stack.setChannel(1);
	resetMinAndMax();
	Stack.setDisplayMode("composite");
	selectImage(map);
	close();
	setBatchMode(false);
}

function selectImageChannelAndFrame(imageID, color, frame) {
		selectImage(imageID);
		if (color==_COLORS[0]) {
			Stack.setChannel(1);
		} else {	
			Stack.setChannel(2);
		}
		Stack.setFrame(frame);
}

function getIDFor(x, y, currentChannel, currentFrame) {
	if (currentFrame==1) return -1;
	for(f=currentFrame-1; f>0; f--) {
		Stack.setFrame(f);
		Stack.setChannel(currentChannel);
		val = getPixel(x, y);
		if (val>0) {
			Stack.setFrame(currentFrame);
			return val;
		}
	}
	Stack.setFrame(currentFrame);
	return -1;	 
}

