/**
  * NDPI export regions
  * 
  * The tool exports rectangular regions, defined with the NDP.view 2 software 
  * from the highest resolution version of the image and saves them as tif-files.
  * 
  * (c) 2020, INSERM
  * written by Volker Baecker at Montpellier Ressources Imagerie, Biocampus Montpellier, INSERM, CNRS, University of Montpellier (www.mri.cnrs.fr)
  * 
 **/ 

var _SLIDE_IMAGE_SERIES = "series_6";
var helpURL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/NDPI_Export_Regions_Tool";

macro "ndpi export regions Action Tool (f2) - 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" {
	ndpiExportRegions(_SLIDE_IMAGE_SERIES);
}

macro "ndpi export regions [f2]" {
	ndpiExportRegions(_SLIDE_IMAGE_SERIES);
}

macro "ndpi export regions Action Tool (f2) Options" {
	Dialog.create("NDPI Export Regions Help");
	Dialog.addMessage("The tool exports the regions defined in the ndpa-files from the ndpi-images.");
	Dialog.addMessage("Press the help button below to open the online help!");
	Dialog.addString("slide image series: ", _SLIDE_IMAGE_SERIES);
	Dialog.addHelp(helpURL);
	Dialog.show();	
	_SLIDE_IMAGE_SERIES = Dialog.getString();
}

function ndpiExportRegions(slideImageSeries) {
	dir = getDirectory("Please select the input folder!");
	files = getFileList(dir);
	files = filterNDPAFiles(files);
	print(files.length + " annotation files found...");
	for (i = 0; i < files.length; i++) {
		file = files[i];
		image = replace(file, ".ndpa", "");
		pixelSize = newArray(2);
		readPixelSize(dir + '/' + image, pixelSize);
		pixelWidth = pixelSize[0];
		pixelHeight = pixelSize[1];
		roiManager("reset");
		run("Bio-Formats", "open=["+dir+'/'+image+"] color_mode=Composite rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT "+slideImageSeries);
		setThreshold(1, 255);
		run("Create Selection");
		Roi.getBounds(imageOriginX, imageOriginY, imageWidthInPixel, imageHeightInPixel);
		imageOriginX += 0.25;
		imageOriginY -= 0.25;
		toScaled(imageOriginX, imageOriginY);
		run("Select None");
		CENTER_OF_SLICE_X = getWidth();
		CENTER_OF_SLICE_Y = getHeight();
		toScaled(CENTER_OF_SLICE_X, CENTER_OF_SLICE_Y);
		CENTER_OF_SLICE_X /= 2;
		CENTER_OF_SLICE_Y /= 2;
		annotations = File.openAsString(dir + "/" + file);
		lines = split(annotations, "\n");
		l = 0;
		inAnnotation = false;
		xPoints = newArray(0);
		yPoints = newArray(0);
		print("Processing image: "+ dir + "/" + image);
		while (l<lines.length) {
			line = String.trim(lines[l]);
			if (startsWith(line, '<annotation type="freehand" displayname="AnnotateRectangle"')) {
				inAnnotation = true;		
				xPoints = newArray(0);
				yPoints = newArray(0);
			}
			if (startsWith(line, '</annotation>')) {
				inAnnotation = false;		
				cropZone(dir, image, imageOriginX, imageOriginY, pixelWidth, pixelHeight, xPoints, yPoints);
			}
			if (inAnnotation && startsWith(line, '<point>')) {
				x =  String.trim(lines[l+1]);
				x = replace(x, '<x>', '');
				x = replace(x, '</x>', '');
				y =  String.trim(lines[l+2]);
				y = replace(y, '<y>', '');
				y = replace(y, '</y>', '');
				x = parseInt(x);
				y = parseInt(y);
				x = (x / 1000.0) + CENTER_OF_SLICE_X;
				y = (y / 1000.0) + CENTER_OF_SLICE_Y;
				xPoints = Array.concat(xPoints, x);
				yPoints = Array.concat(yPoints, y);
			}
			l++;
		}
		close();
	}
}

function readPixelSize(image, res) {
	run("Bio-Formats", "open=["+image+"] color_mode=Composite crop rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT series_1 x_coordinate_1="+0+" y_coordinate_1="+0+" width_1="+10+" height_1="+10);
	getPixelSize(unit, pixelWidth, pixelHeight);
	res[0]=pixelWidth;
	res[1]=pixelHeight;
	close();
}

function cropZone(dir, image, imageOriginX, imageOriginY, pixelWidth, pixelHeight, xPoints, yPoints) {
	ranks = Array.rankPositions(xPoints);
	xMin = xPoints[ranks[0]];
	xMax = xPoints[ranks[ranks.length-1]];
	ranks = Array.rankPositions(yPoints);
	yMin = yPoints[ranks[0]];
	yMax = yPoints[ranks[ranks.length-1]];
	xMin = (xMin-imageOriginX)/pixelWidth;
	xMax = (xMax-imageOriginX)/pixelWidth;
	yMin = (yMin-imageOriginY)/pixelHeight;
	yMax = (yMax-imageOriginY)/pixelHeight;
	width = xMax - xMin;
	height = yMax - yMin;
	print("Exporting zone: x="+xMin+", y="+yMin+", width="+width+", height=" + height);
	run("Bio-Formats", "open=["+dir+"/"+image+"] color_mode=Composite crop rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT series_1 x_coordinate_1="+xMin+" y_coordinate_1="+yMin+" width_1="+width+" height_1="+height);
	if (!File.exists(dir+"/"+"zones")) File.makeDirectory(dir+"/"+"zones");
	name = File.getNameWithoutExtension(image);
	saveAs("tiff", dir+"/"+"zones"+"/"+name+"-"+round(xMin)+"-"+round(yMin));
	close();
}

function filterNDPAFiles(files) {
	res = newArray(0);
	for (i = 0; i < files.length; i++) {
		file = files[i];
		if (endsWith(file, '.ndpa')) {
			res = Array.concat(res, file);
		}
	}
	return res;
}
