var SIGMA = 7;
var THRESHOLDING_METHOD = "Intermodes";		
var THRESHOLDING_METHODS = getList("threshold.methods");
var CHANNELS = newArray("405", "640", "488", "561");
var FISH_CHANNELS = newArray("488", "561");
var FISH_CHANNEL = FISH_CHANNELS[0];
var BATCH_MODE = false;

var CLASSIFIER_FOLDER = getDirectory("macros") + "/toolsets/";
var CLASSIFIER = "neurite_segmentation_final.ilp"
var OUTPUT_TYPE = "Segmentation";
var INPUT_DATASET = "/exported_data";
var OUTPUT_DATASET = "/exported_data";
var AXIS_ORDER = "tzyxc";
var COMPRESSION_LEVEL = 0;
var DO_HISTO_EQ = true;

var NR_OF_CLOSE_OPERATIONS = 4;
var MIN_NEURITE_AREA = 20000;

var NUMBER_OF_DILATES = 50;

var LUT = "Random";
var CONNECTIVITY = 4;

var SCALE = 1.7;
var PROEMINENCE = 200;
var NEURITE_ID_CHANNEL = 3;
var DISTANCE_CHANNEL = 4;

var MAX_SPOTS = 99999;

var helpURL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/MRI_Neurite_Analyzer";
 
//batchProcessImages();
readSpotsFromFile("/media/baecker/4toEXFAT1/in/ready/Coleno_smFISH_IF_p1tivneg_oligopool456_neuronespurifiés_201016/_B02_Kif1a__488.txt");
exit;

macro "Neurite Analyzer (F1) Action Tool - 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" {
	run('URL...', 'url='+helpURL);	
}

macro "Neurite Analyzer [f1]" {
	run('URL...', 'url='+helpURL);	
}

macro "segment nuclei (f2) Action Tool - C000T4b12n" {
	segmentNuclei();
}

macro "segment nuclei [f2]" {
	segmentNuclei();
}

macro "segment nuclei (f2) Action Tool Options" {
	Dialog.create("Segment Nuclei Options");
	Dialog.addNumber("sigma of Gaussian blur: ", SIGMA);
	Dialog.addChoice("thresholding method", THRESHOLDING_METHODS, THRESHOLDING_METHOD);
	Dialog.show();
	SIGMA = Dialog.getNumber();
	THRESHOLDING_METHOD = Dialog.getChoice();
}
macro "segment neurites (f3) Action Tool - C000T4b12s" {
	segmentNeurites();	
}

macro "segment neurites [f3]" {
	segmentNeurites();	
}

macro "segment neurites (f3) Action Tool Options" {
	Dialog.create("Segment Neurites Options");
	Dialog.addCheckbox("equalize histogram: ", DO_HISTO_EQ);
	Dialog.addString("input dataset: ", INPUT_DATASET, 40);
	Dialog.addString("axis order: ", AXIS_ORDER);
	Dialog.addString("classifier folder: ", CLASSIFIER_FOLDER, 60);
	Dialog.addString("classifier: ", CLASSIFIER, 40);
	
	Dialog.show();

	DO_HISTO_EQ = Dialog.getCheckbox();
	INPUT_DATASET = Dialog.getString();
	AXIS_ORDER = Dialog.getString();
	CLASSIFIER_FOLDER = Dialog.getString();
	CLASSIFIER = Dialog.getString();
}

macro "calculate distances (f4) Action Tool - C000T4b12d" {
	mergeAndFilter();
}

macro  "calculate distances [f4]" {
	mergeAndFilter();
}

macro "calculate distances (f4) Action Tool Options" {
	Dialog.create("calculate distances options")
	Dialog.addString("nuclei channel: ", CHANNELS[0]);
	Dialog.addString("neurite channel: ", CHANNELS[1]);
	Dialog.addString("FISH channel: ", CHANNELS[2]);
	Dialog.addNumber("number of dilates on nuclei mask", NUMBER_OF_DILATES);
	Dialog.show();
	CHANNELS[0] = Dialog.getString();
	CHANNELS[1] = Dialog.getString();
	CHANNELS[2] = Dialog.getString();
	NUMBER_OF_DILATES = Dialog.getNumber();
}

macro "label neurites (f5) Action Tool - C000T4b12l" {
   labelNeurites();  
}

macro "label neurites [f5]" {
    labelNeurites();
}

macro "label neurites (f5) Action Tool Options" {
	Dialog.create("Label Neurites Options");	
	Dialog.addNumber("connectivity: ", CONNECTIVITY);
	Dialog.show();
	CONNECTIVITY = Dialog.getNumber();
}

macro "measure FISH Signal on neurites (f6) Action Tool - C000T4b12f" {
	measureFISHOnNeurites(false);
}

macro "measure FISH Signal on neurites [f6]" {
	measureFISHOnNeurites(false);
}

macro "measure FISH Signal on neurites (f6) Action Tool Options" {
	Dialog.create("measure FISH spots options");
	Dialog.addChoice("FISH channel: ", FISH_CHANNELS, FISH_CHANNEL);
	Dialog.addNumber("scale: ", SIGMA);
	Dialog.addNumber("proeminence: ", PROEMINENCE);
	Dialog.show();
	FISH_CHANNEL = Dialog.getChoice();
	SIGMA = Dialog.getNumber();
	PROEMINENCE = Dialog.getNumber();
}

macro "batch segment nuclei (f7) Action Tool - C037T1d13bT9d13nC555" {
	dir = getDir("Select the input folder!");
	batchSegmentNuclei(dir);
}

macro "batch segment nuclei [f7]" {
	dir = getDir("Select the input folder!");
	batchSegmentNuclei(dir);
}

macro "batch export as h5 (f8) Action Tool - C037T1d13hT9d135C555" {
	batchConvertToH5();
}

macro "batch export as h5 [f8]" {
	batchConvertToH5();
}

macro "batch export as h5 (f8) Action Tool Options" {
	Dialog.create("Export as h5 Options");
	Dialog.addCheckbox("equalize histogram: ", DO_HISTO_EQ);
	Dialog.show();
	DO_HISTO_EQ = Dialog.getCheckbox();
}

macro "use ilastik (f9) Action Tool - C000T4b12i" {
	useIlastikDialog();
}

macro "use ilastik [f9]" {
	useIlastikDialog();	
}

macro "batch mask to selection (f10) Action Tool - C037T1d13bT9d13sC555" {
	dir = getDir("Select the input folder!");
	batchMaskToSelection(dir);
}


macro "batch mask to selection [f10]" {
	dir = getDir("Select the input folder!");
	batchMaskToSelection(dir);
}

macro "batch calculate distances (f11) Action Tool - C037T1d13bT9d13dC555" {
	dir = getDir("Select the input folder!");
	batchMergeAndFilter(dir);
}

macro "batch calculateDistances [f11]" {
	dir = getDir("Select the input folder!");
	batchMergeAndFilter(dir);
}

macro "batch measure FISH Signal on neurites (f12) Action Tool - C037T1d13bT9d13fC555" {
	dir = getDir("Select the input folder!");
	batchMeasureFISHOnNeurites(dir);
}

macro "batch measure FISH Signal on neurites [f12]" {
	dir = getDir("Select the input folder!");
	batchMeasureFISHOnNeurites(dir);
}

macro "batch measure FISH Signal on neurites (f12) Action Tool Options" {
	Dialog.create("batch measure FISH Signal on neurites options");
	fishChannelsString = String.join(FISH_CHANNELS) 
	Dialog.addString("FISH channels: ", fishChannelsString);
	Dialog.show();
	fishChannelsString = Dialog.getString();
	FISH_CHANNELS = split(fishChannelsString, ",");
	for (i = 0; i < FISH_CHANNELS.length; i++) {
		FISH_CHANNELS[i] = String.trim(FISH_CHANNELS[i]);
	}
}

macro "batch process images Action Tool - C000T4b12b" {
	batchProcessImages();
}

function useIlastikDialog() {
	Dialog.create("Use ilastik");
	Dialog.addMessage("Use ilastik to create a classifier and segment the neurite channel!\nSave each segmentation-mask in the folder of its input image.");
	Dialog.show();
}


function selectNucleiImage() {
	selectImageWithTextInTitle(CHANNELS[0]);
}

function selectNeuriteImage() {
	selectImageWithTextInTitle(CHANNELS[1]);
}


function selectFISHImage() {
	selectImageWithTextInTitle(FISH_CHANNEL);
}

function selectCompositeImage() {
	selectImageWithTextInTitle("composite");
}


function selectImageWithTextInTitle(text) {
	titles = getList("image.titles");
	for (i = 0; i < titles.length; i++) {
		title = titles[i];
		selectImage(title);
		type = getInfo("window.type");
		if ((type!="Image")) continue;	
		if (indexOf(title, text)>-1) return;
	}
}

function removeRoisWithoutSupport(image, otherImage) {
	selectImage(otherImage);
	run("To ROI Manager");
	run("Select None");
	roiManager("combine");
	if (!BATCH_MODE) setBatchMode(true);
	run("Create Mask");
	rename("neurite-mask");
	otherImageMaskID = getImageID();
	selectImage(otherImage);
	run("From ROI Manager");
	roiManager("reset");
	selectImage(image);
	Overlay.copy
	selectImage(otherImageMaskID);	
	Overlay.paste
	toBeRemoved = newArray(0);
	for (i = 0; i < Overlay.size; i++) {
		showProgress(i+1, Overlay.size);
		Overlay.activateSelection(i);
		v = getValue("Mean");
		if (v==0) {
			toBeRemoved = Array.concat(toBeRemoved, i);
		}
	}
	selectImage(image);	
	run("To ROI Manager");
	if (toBeRemoved.length>0) {
		roiManager("select", toBeRemoved);
		roiManager("delete");
		run("Select None");
	}
	print("Removed :"+toBeRemoved.length+" rois");
	count = roiManager("count");
	if (count>0) {
		run("From ROI Manager");
	}
	roiManager("reset");
	selectImage(otherImageMaskID);
	close();
	if (!BATCH_MODE) setBatchMode("exit and display");
}

function mergeAndFilter() {
	selectNucleiImage();
	imageInfo = getImageInfo();
	nucleiImageTitle = imageInfo[0];
	nucleiImageID = imageInfo[1];
	neuriteImageTitle = imageInfo[2];
	neuriteImageID = imageInfo[3];
	showStatus("Merge and filter: STARTED...");
	removeRoisWithoutSupport(nucleiImageID, neuriteImageID);
	showStatus("Merge and filter: STAND BY...");
	removeRoisWithoutSupport(neuriteImageID, nucleiImageID);
	selectImage(nucleiImageID);
	run("To ROI Manager");
	roiManager("Combine");
	run("Create Mask");
	rename("nuclei-mask");
	nucleiMaskID = getImageID();
	run("Options...", "iterations="+NUMBER_OF_DILATES+" count=1 do=Dilate");
	selectImage(nucleiImageID);
	run("From ROI Manager");
	roiManager("reset");
	selectImage(neuriteImageID);
	run("To ROI Manager");
	roiManager("Combine");
	run("Create Mask");
	rename("neurite-mask");
	neuriteMaskID = getImageID();
	run("Geodesic Distance Map", "marker=nuclei-mask mask=neurite-mask distances=[Chessknight (5,7,11)] output=[16 bits] normalize");
	max = getValue("Max");
	run("Macro...", "code=v=(v!="+max+")*v");
	selectImage(neuriteImageID);
	run("From ROI Manager");
	roiManager("reset");
	showStatus("Merging and filter: DONE.");
}

function labelNeurites() {
    selectImage("nuclei-mask");
    run("16-bit");
    run("Connected Components Labeling",  "connectivity="+CONNECTIVITY+" type=[16 bits]");
    getHistogram(values, counts, 255);
    max = Math.ceil(values[values.length -1]);
    nucleiLabels = getImageID();
    run("Copy");
    selectImage("neurite-mask");
    run("16-bit");
    run("Macro...", "code=[v = (v==255) * 65535]");
    setPasteMode("Transparent-zero");
    run("Paste");
    run("Neurite Labelling PlugIn");
    run(LUT);
    setMinAndMax(0, max);
    run("Select None");
    selectNucleiImage();
    nucleiTitle = getTitle();
    selectNeuriteImage();
    neuritesTitle = getTitle();
    run("Merge Channels...", "c3="+nucleiTitle+" c4="+neuritesTitle+" c5=neurite-mask c6=neurite-mask-geoddist create");
    selectImage("nuclei-mask");
    close();
    selectImage("nuclei-mask-lbl");
    close();
}

function getImageInfo() {
	title = getTitle();    
	imageID = getImageID();
	if (indexOf(title, CHANNELS[0])>-1) {
		nucleiImageTitle = title;
		nucleiImageID = imageID;
		neuriteImageTitle = replace(nucleiImageTitle, CHANNELS[0], CHANNELS[1]);
		selectImage(neuriteImageTitle);
		neuriteImageID = getImageID();
	} 
	if (indexOf(title, CHANNELS[1])>-1) {
		neuriteImageTitle = title;
		neuriteImageID = imageID;
		nucleiImageTitle = replace(neuriteImageTitle, CHANNELS[1], CHANNELS[0]);
		selectImage(nucleiImageTitle);
		nucleiImageID = getImageID();
	}
	return newArray(nucleiImageTitle, nucleiImageID, neuriteImageTitle, neuriteImageID);
}

function batchSegmentNuclei(dir) {
	subfolders = getFileList(dir);
	setBatchMode(true);
	BATCH_MODE = true;
	print("\\Clear");
	for (i = 0; i < subfolders.length; i++) {
		print("Entering folder " + subfolders[i]);
		folder = dir + subfolders[i];
		files = getFileList(folder);
		files = getFilesForChannel(files, CHANNELS[0], "tif");
		for (f = 0; f < files.length; f++) {
			file = files[f];
			print("Processing file " + file);
			open(folder + file);
			segmentNuclei();
			save(folder + file);
			close();
		}
	}
	setBatchMode("exit and display");
	BATCH_MODE = false;
}


/**
 * Run the ilastik-classifier on the active image and transform the resulting segmentation mask
 * to a roi on the input image.
 */
function segmentNeurites() {
	selectNeuriteImage();
	Overlay.remove;
	outputDataset = "exported_data";
	compressionLevel = 0;
	imageID = getImageID();
	dir = getInfo("image.directory");
	file = getInfo("image.filename");
	parts = split(file, ".");
	file = replace(file, "\."+parts[1], ".h5");
	outputPath = dir + file;
	run("Duplicate...", " ");
	if (DO_HISTO_EQ) equalize();
	exportArgs = "select=" + outputPath + " datasetname=" + outputDataset + " compressionlevel=" + compressionLevel;
	run("Export HDF5", exportArgs);
	close();
	inputImage = outputPath + INPUT_DATASET;
	importArgs = "select=" + outputPath + " datasetname=" + INPUT_DATASET + " axisorder=" + AXIS_ORDER; 	
	run("Import HDF5", importArgs);
	h5Image = getImageID();
	pixelClassificationArgs = "projectfilename=" + CLASSIFIER_FOLDER + CLASSIFIER + " saveonly=false inputimage=" + inputImage + " pixelclassificationtype=" + OUTPUT_TYPE;
	run("Run Pixel Classification Prediction", pixelClassificationArgs);
	neuriteMaskToSelection();
	segmentationImage = getImageID();
	selectImage(h5Image);
	close();
	selectImage(imageID);
	count = roiManager("count");
	if (count>0) run("From ROI Manager");
 	roiManager("reset");
}

/**
 * Segment nuclei and add the resulting roi to the overlay
 * of the channel.
 */
function segmentNuclei() {
	selectNucleiImage();
	Overlay.remove;
	if (!BATCH_MODE) setBatchMode("hide");
	run("Duplicate...", " ");
	run("Gaussian Blur...", "sigma="+SIGMA);
	setAutoThreshold(THRESHOLDING_METHOD + " dark");
	run("Analyze Particles...", "  show=Overlay ");
	Overlay.copy;
	close();
	Overlay.paste;
	if (!BATCH_MODE) setBatchMode("show");
}

function getFilesForChannel(files, channel, ext) {
	res = newArray(0);
	for (i = 0; i < files.length; i++) {
		file = files[i];
		if (indexOf(file, channel)>-1 && endsWith(file, "."+ext)) {
			res = Array.concat(res, file);			
		}
	}
	return res;
}

function getH5FilesForChannel(files, channel) {
	res = newArray(0);
	for (i = 0; i < files.length; i++) {
		file = files[i];
		if (indexOf(file, channel)>-1 && endsWith(file, ".h5")) {
			res = Array.concat(res, file);			
		}
	}
	return res;
}	

function equalize() {
	run("Enhance Contrast...", "saturated=0.3 equalize");
	run("Gaussian Blur...", "sigma=1");
}

function batchEqualize() {
	dir = getDir("Select the input folder!");
	subfolders = getFileList(dir);
	setBatchMode(true);
	for (i = 0; i < subfolders.length; i++) {
		print("Entering folder " + subfolders[i]);
		showProgress(i+1, subfolders.length);
		folder = dir + subfolders[i];
		files = getFileList(folder);
		files = getFilesForChannel(files, CHANNELS[1], "tif");
		for (f = 0; f < files.length; f++) {
			file = files[f];
			open(folder + file);
			equalize();
			save(folder + file);
			close();
		}
	}
	setBatchMode("exit and display");
}

function batchConvertToH5() {
	t1 = getTime();
	outputDataset = "exported_data";
	compressionLevel = 0;

	dir = getDir("Select the input folder!");
	subfolders = getFileList(dir);
	print("\\Clear");
	setBatchMode(true);
	for (i = 0; i < subfolders.length; i++) {
		showProgress(i+1, subfolders.length);
		print("Entering folder " + subfolders[i]);
		folder = dir + subfolders[i];
		files = getFileList(folder);
		files = getFilesForChannel(files, CHANNELS[1], "tif");
		for (f = 0; f < files.length; f++) {
			file = files[f];
			filesString = String.join(files, ",");
			if (endsWith(file, ".h5")) continue;
			out = replace(file, "tif", "h5");
			if (indexOf(filesString, out)>-1) continue;
			print("Processing file " + file);
			open(folder + file);
			if (DO_HISTO_EQ) equalize();
			outputPath = folder + File.nameWithoutExtension + ".h5";			
			exportArgs = "select=" + outputPath + " datasetname=" + outputDataset + " compressionlevel=" + compressionLevel;
			run("Export HDF5", exportArgs);
			close("*");
			if (f%10==0) run("Collect Garbage");
		}
	}
	setBatchMode(false);
	t2 = getTime();
	print("batch convert to h5 took: " + (t2-t1)/1000 + "s");
}

function batchSegmentNeurites() {
	dir = getDir("Select the input folder!");
	subfolders = getFileList(dir);
	setBatchMode(true);
	BATCH_MODE = true;
	print("\\Clear");
	for (i = 0; i < subfolders.length; i++) {
		print("Entering folder " + subfolders[i]);
		folder = dir + subfolders[i];
		files = getFileList(folder);
		files = getFilesForChannel(files, CHANNELS[1], "tif");
		for (f = 0; f < files.length; f++) {
			file = files[f];
			print("Processing file " + file);
			open(folder + file);
			segmentNeurites();
			save(folder + file);
			close();
		}
	}
	setBatchMode("exit and display");
	BATCH_MODE = false;
}

function batchMaskToSelection(dir) {
	subfolders = getFileList(dir);
	setBatchMode(true);
	BATCH_MODE = true;
	for (i = 0; i < subfolders.length; i++) {
		print("Entering folder " + subfolders[i]);
		showProgress(i+1, subfolders.length);
		folder = dir + subfolders[i];
		files = getFileList(folder);
		files = getFilesForChannel(files, CHANNELS[0], "tif");
		for (f = 0; f < files.length; f++) {
			print("Processing file " + files[f]);
			roiManager("reset");
			file = folder + files[f];
			file2 = replace(file, CHANNELS[0], CHANNELS[1]);
			file3 = replace(file2, ".tif", "_Simple Segmentation.tif");
			open(file2);
			neuriteImageID = getImageID();
			neuriteImageTitle = getTitle();
			open(file3);
			neuriteMaskToSelection();
			run("From ROI Manager");
			run("Enhance Contrast", "saturated=0.35");
			save(file2);
			close("*");
		}
	}
	setBatchMode("exit and display");
	BATCH_MODE = false;
}

function batchMergeAndFilter(dir) {
	subfolders = getFileList(dir);
//	setBatchMode(true);
//	BATCH_MODE = true;
	for (i = 0; i < subfolders.length; i++) {
		print("Entering folder " + subfolders[i]);
		showProgress(i+1, subfolders.length);
		folder = dir + subfolders[i];
		files = getFileList(folder);
		files = getFilesForChannel(files, CHANNELS[0], "tif");
		for (f = 0; f < files.length; f++) {
			print("Processing file " + files[f]);
			roiManager("reset");
			outFile = replace(files[f], CHANNELS[0]+".tif", "result_composite.tif");
			outFile = folder + outFile;
			file = folder + files[f];			
			open(file);
			nucleiTitle = getTitle();
			file2 = replace(file, CHANNELS[0], CHANNELS[1]);
			open(file2);
			neuritesTitle = getTitle();
			mergeAndFilter();
			labelNeurites();
			save(outFile);
			close("*");
		}
	}
//	setBatchMode("exit and display");
//	BATCH_MODE = false;
}

function neuriteMaskToSelection() {
	roiManager("reset");
	imageID = getImageID();
	run("Invert");
	run("Invert LUT");
	run("Options...", "iterations="+NR_OF_CLOSE_OPERATIONS+" count=1 do=Close");
	run("Analyze Particles...", "size="+MIN_NEURITE_AREA+"-Infinity composite add");
	run("Select None");
	selectImage(imageID);
	close();
}

function batchMeasureFISHOnNeurites(dir) {
	subfolders = getFileList(dir);
//	setBatchMode(true);
//	BATCH_MODE = true;
	for (i = 0; i < subfolders.length; i++) {
		print("Entering folder " + subfolders[i]);
		showProgress(i+1, subfolders.length);
		folder = dir + subfolders[i];
		files = getFileList(folder);
		oldFISHChannel = FISH_CHANNEL;
		for (c=0; c<FISH_CHANNELS.length; c++) {
			FISH_CHANNEL =  FISH_CHANNELS[c];
			files = getFilesForChannel(files, FISH_CHANNEL, "tif");
			for (f = 0; f < files.length; f++) {
				print("Processing file " + files[f]);
				roiManager("reset");
				file = folder + files[f];
				file2 = replace(file, FISH_CHANNEL + ".tif", "result_composite.tif");
				open(file);
				open(file2);
				imageID = getImageID();
				txtFile = replace(file, FISH_CHANNEL + ".tif", FISH_CHANNEL +".txt");
				read = readSpotsFromFile(txtFile);
				if (!read) {
					print("To many spots in file " +  txtFile + "! Skipping!!!");
					run("Close All");
					continue;
				}
				measureFISHOnNeurites(true);
				selectImage(imageID);
				run("From ROI Manager");
				save(file2);
				parts = split(file, ".");
				Table.save(parts[0] + ".xls", "Results");
				close("*");
			}
		}
		FISH_CHANNEL = oldFISHChannel;
	}
//	setBatchMode("exit and display");
//	BATCH_MODE = false;
}	

function readSpotsFromFile(path) {
	content = File.openAsString(path);
	lines = split(content, "\n");
	if (lines.length > MAX_SPOTS) {
		return false;
	}
	xpoints = newArray(lines.length);
	ypoints = newArray(lines.length);
	for (i=0; i<lines.length; i++) {
	    line = lines[i];
	    parts = split(line, ", ");
	    ypoints[i] = parseFloat(parts[0]);
	    xpoints[i] = parseFloat(parts[1]);
	}
	makeSelection("point", xpoints, ypoints);
	roiManager("reset");
	roiManager("add");	
	return true;
}

function measureFISHOnNeurites(useExistingSpots) {
	selectFISHImage();
	if (!useExistingSpots) detectSpots();
	selectCompositeImage();
	roiManager("Show None");
	roiManager("Show All");
	run("Set Measurements...", "mean redirect=None decimal=3");
	roiManager("select", 0);
	run("Clear Results");
	Stack.setChannel(NEURITE_ID_CHANNEL);	
	roiManager("measure");
	X = Table.getColumn("X");
	Y = Table.getColumn("Y");
	neuronID = Table.getColumn("Mean");
	
	run("Clear Results");
	Stack.setChannel(DISTANCE_CHANNEL);	
	roiManager("measure");
	somaDistance = Table.getColumn("Mean");
	xPoints = newArray(0);
	yPoints = newArray(0);
	for (i = 0; i < neuronID.length; i++) {
//		if (neuronID[i] == 0 || somaDistance[i]==0) continue;		measure everything, outside id == 0, in soma distance == 0.
		xPoints = Array.concat(xPoints, X[i]);
		yPoints = Array.concat(yPoints, Y[i]);
	}
	roiManager("reset");
	run("Clear Results");
	makeSelection("point", xPoints, yPoints);
	roiManager("add");
	roiManager("Remove Channel Info");
	roiManager("Remove Slice Info");
	roiManager("Remove Frame Info");
	Stack.setChannel(NEURITE_ID_CHANNEL);	
	roiManager("measure");
	Table.update("Results");
	X = Table.getColumn("X");
	Y = Table.getColumn("Y");
	neuronID = Table.getColumn("Mean");
	run("Clear Results");
	Stack.setChannel(DISTANCE_CHANNEL);	
	roiManager("measure");
	Table.update("Results");
	somaDistance = Table.getColumn("Mean");
	run("Clear Results");
	Table.setColumn("X", X);
	Table.setColumn("Y", Y);
	Table.setColumn("Neuron-ID", neuronID);
	Table.setColumn("Dist. to Soma", somaDistance);
	Table.sort("Neuron-ID", "Results");
}

function detectSpots() {
	run("FeatureJ Laplacian", "compute smoothing="+SCALE);
	run("16-bit");
	run("Find Maxima...", "prominence="+PROEMINENCE+" light output=[Point Selection]");
	roiManager("reset");
	roiManager("Add");
	close();
}

function batchProcessImages() {
	dir = getDir("Select the input folder!");
	startTime = getTime();
	print("Segmenting nuclei...");
	batchSegmentNuclei(dir);
	segmentNucleiTime = getTime();
	print("Creating rois from masks...");
	batchMaskToSelection(dir);
	maskToSelectionTime = getTime();
	print("Merging and filtering nuclei and neurites");
	batchMergeAndFilter(dir);
	mergeAndFilterTime = getTime();
	print("Measuring FISH on neurites");
	batchMeasureFISHOnNeurites(dir);
	endTime = getTime();

	print("total time: ", (endTime-startTime)/(1000*60));
	print("segment nuclei time: ", (segmentNucleiTime-startTime)/(1000*60));
	print("mask to selection time: ", (maskToSelectionTime-segmentNucleiTime)/(1000*60));
	print("merge and filter time: ", (mergeAndFilterTime-maskToSelectionTime)/(1000*60));
	print("measure FISH on neurites: ", (endTime-mergeAndFilterTime)/(1000*60));
}
