/**
 Radial movement analyzer. 

(c) 2022, INSERM
written by Volker Baecker at Montpellier Ressources Imagerie, Biocampus Montpellier, INSERM, CNRS, University of Montpellier (www.mri.cnrs.fr)

The tool takes a results table of tracking data (as created by Trackmate) and calculates the mean of the scalar projections of the vector of the 
displacement of each particle from one timepoint t to the next t+1, onto the vector from a given point to the coordinates of the particle at timepoint t 

If the particles are moving away from the given point the result will be positive, if they are moving towards the given point the result will be negative.
If neither of the above is the case, the result will be near zero.
*/

var DISPLAY_PLOT = true;

var helpURL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/Radial_Movement_Tool";

macro "Radial Movement Tool Help [f4]" {
    run('URL...', 'url='+helpURL);
}

macro "Radial Movement Tool Help (f4) Action Tool - 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"{
    run('URL...', 'url='+helpURL);
}


macro "calculate radial movement (f5) Action Tool - C000T4b12d" {
    calculateRadialMovement();
}

macro "calculate radial movement [f5]" {
    calculateRadialMovement();
}

macro "calculate radial movement (f5) Action Tool Options" {
    Dialog.create("calculate radial movement options");
    Dialog.addCheckbox("display plot", DISPLAY_PLOT);
    Dialog.show();
    DISPLAY_PLOT = Dialog.getCheckbox();
}

function calculateRadialMovement() {
    table = Table.title
    macrosDir = getDirectory("macros");
    script = File.openAsString(macrosDir + "/toolsets/radial_movement_analyzer.py");
    plotParam = "false";
    if (DISPLAY_PLOT)
        plotParam = "true";
    parameter = "table="+table+",plot="+plotParam;
    call("ij.plugin.Macro_Runner.runPython", script, parameter);      
}
