/**
 * 
 *  spine_analyzer.ijm
 * 
 *  Tools to measure the density and volume of dendritic spines.
 * 
 *  (c) 2023 INSERM
 * 
 *  written by Volker Baecker at the MRI-Center for Image Analysis (MRI-CIA - https://www.mri.cnrs.fr/en/data-analysis.html)
 * 
 *  segment_spine.py is free software under the MIT license.
 *  
 *  MIT License
 * 
 *  Copyright (c) 2023 INSERM
 * 
 *  Permission is hereby granted, free of charge, to any person obtaining a copy
 *  of this software and associated documentation files (the "Software"), to deal
 *  in the Software without restriction, including without limitation the rights
 *  to use, copy, modify, merge, publish, distribute, sublicense, and/or sell
 *  copies of the Software, and to permit persons to whom the Software is
 *  furnished to do so, subject to the following conditions:
 * 
 *  The above copyright notice and this permission notice shall be included in all
 *  copies or substantial portions of the Software.
 * 
 *  THE SOFTWARE IS PROVIDED "AS IS", WITHOUT WARRANTY OF ANY KIND, EXPRESS OR
 *  IMPLIED, INCLUDING BUT NOT LIMITED TO THE WARRANTIES OF MERCHANTABILITY,
 *  FITNESS FOR A PARTICULAR PURPOSE AND NONINFRINGEMENT. IN NO EVENT SHALL THE
 *  AUTHORS OR COPYRIGHT HOLDERS BE LIABLE FOR ANY CLAIM, DAMAGES OR OTHER
 *  LIABILITY, WHETHER IN AN ACTION OF CONTRACT, TORT OR OTHERWISE, ARISING FROM,
 *  OUT OF OR IN CONNECTION WITH THE SOFTWARE OR THE USE OR OTHER DEALINGS IN THE
 *  SOFTWARE.
 *  
*/

var _URL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/Spine-Analyzer";


macro "Spine Analyzer Help Action Tool - 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" {
    run('URL...', 'url='+_URL);
}


macro "Segment Spine (f5) Action Tool - C000T4b12s" {
    runSegmentSpine();
}


macro "Segment Spine (f5) Action Tool Options" {
    showSegmentSpineOptions();
}


macro "Segment Spine [F5]" {
    runSegmentSpine();
}


function runSegmentSpine() {
    call("ij.Prefs.set", "mri.options.only", "false");   
    if (File.exists(getOptionsPathSegmentSpine())) {
        options = loadOptions(getOptionsPathSegmentSpine());
        run("segment spine", options);
    } else {
        run("segment spine");
    }  
}


function showSegmentSpineOptions() {
    call("ij.Prefs.set", "mri.options.only", "true");
    run("segment spine");
    call("ij.Prefs.set", "mri.options.only", "false");  
}


function getOptionsPathSegmentSpine() {
    pluginsPath = getDirectory("plugins");
    optionsPath = pluginsPath + "Spine-Analyzer/sass-options.txt";
    return optionsPath;
}    


function loadOptions(path) {
    optionsString = File.openAsString(path);
    optionsString = replace(optionsString, "\n", "");
    return optionsString;  
}

