var _IMG_WIDTH = 1024;
var _IMG_HEIGHT = 1024;
var _NR_OF_IMAGES = 100;
var _NR_OF_NUCLEI_MEAN = 12;
var _NR_OF_NUCLEI_STD = 2;
var _RADIUS_MEAN = 30;
var _RADIUS_STD = 3;
var _RADIUS_NUCLEOLES = 2;
var _DEPTH_NUCLEOLES = 50;

var _MEAN_INTENSITY_NUCLEI = 128;
var _STD_INTENSITY_NUCLEI = 20;

var _BACKGROUND_LEVEL = 80;
var _STD_QUANTIC_NOISE = 1;
var _STD_DETECTOR_NOISE = 2;
var _PSF_SIGMA = 2;
var _GRADIENT = 1/200;
var _TYPE = "8-bit";

var helpURL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/MRI_Synthetic_NUCLEI_GENERATOR";

macro "MRI Synthetic Nuclei Generator (f1) Action Tool - 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"{
	help();
}

macro 'MRI Synthetic Nuclei Generator [f1]' {
	help();
}

macro "create image (f2) Action Tool - C000T4b12c" {
	createImage(0, 1);
}

macro "create image [f2]" {
	createImage(0, 1);
}

macro "batch create image (f3) Action Tool - C000T4b12b" {
	batchCreateImages(_NR_OF_IMAGES);
}

macro 'batch create image [f3]' {
	batchCreateImages(_NR_OF_IMAGES);
}

function batchCreateImages(nr) {
	outFolder = getDirectory("Select the folder for the output images.");
	gtFolder = getDirectory("Select the folder for the ground-truth images.");
	for (i = 0; i < nr; i++) {
		showProgress(i, nr-1);
		createImage(i, nr);
		title = getTitle();
		save(gtFolder+"/"+title+".tif");
		close();
		title = getTitle();
		save(outFolder+"/"+title+".tif");
		close();
	}
}

function createImage(i, nr) {
	roiManager("reset");
	counter = IJ.pad(i+1, Math.log10(nr+1)+1);
	newImage("nuclei-"+counter, "8-bit black", _IMG_WIDTH, _IMG_HEIGHT, 1);	
	nrOfNuclei = round(random("gaussian")*_NR_OF_NUCLEI_STD + _NR_OF_NUCLEI_MEAN);	
	for (n = 0; n < nrOfNuclei; n++) {
		doesTouch = true;
		while(doesTouch) {
			radius =  round(random("gaussian")*_RADIUS_STD + _RADIUS_MEAN);	
			x = round(random * _IMG_WIDTH);
			y = round(random * _IMG_HEIGHT);
			angle = random * 2 * PI;
			r = random * radius;
			x2 = x + r * cos(angle);
			y2 = y + r * sin(angle);
			radius2 =  round(random("gaussian")*_RADIUS_STD*2 + _RADIUS_MEAN);	
			makeOval(x-radius, y-radius, 2*radius+1, 2*radius+1);
			setKeyDown("shift");
			makeOval(x2-radius2, y2-radius2, 2*radius2+1, 2*radius2+1);
			getStatistics(area, mean);
			if (mean==0) doesTouch = false;
		}
		roiManager("add");
		setKeyDown("none");
		setColor(n+1);
		run("Fill");
		run("Select None");
	}
	setColor(255);
	gtImage = getImageID();
	run("Select None");
	run("Duplicate...", " ");
	setThreshold(1, 255);
	run("Convert to Mask");
	nucleiImage = getImageID();
	rename("nuclei-"+counter);
	selectImage(gtImage);
	rename("gt-"+counter);
	run("16 colors");
	run("Enhance Contrast", "saturated=0.35");
	selectImage(nucleiImage);
	setThreshold(128, 255);
	run("Create Selection");
	run("Salt and Pepper");
	for (d = 0; d < _RADIUS_NUCLEOLES; d++) {
		run("Erode");
	}
	run("Select None");
	resetThreshold;
	selectImage(gtImage);
	setThreshold(1, 255);
	run("Create Selection");
	selectImage(nucleiImage);
	run("Restore Selection");
	run("Add...", "value="+(255-_DEPTH_NUCLEOLES));
	run("Select None");

	run("32-bit");
	run("Grays");
	run("Divide...", "value=255");
	count = roiManager("count");
	for (r = 0; r < count; r++) {
		roiManager("select", r);
		mean = _STD_INTENSITY_NUCLEI*random("gaussian")+_MEAN_INTENSITY_NUCLEI;	
		run("Multiply...", "value="+mean);
	}
	roiManager("deselect");
	roiManager("Combine");
	run("Make Inverse");
	run("Add...", "value="+_BACKGROUND_LEVEL);
	run("Select None");

	run("Add Specified Noise...", "standard="+_STD_QUANTIC_NOISE);
	run("Gaussian Blur...", "sigma="+_PSF_SIGMA);
	run("Add Specified Noise...", "standard="+_STD_DETECTOR_NOISE);

	factor = 2*random;
	if(random>=0.5) {
		factorX = factor;
		factorY = 1/factor;
	} else {
		factorX = 1/factor;
		factorY = factor;
	}
	run("Macro...", "code=v=v+(("+factorX+"*x+"+factorY+"*y)*"+_GRADIENT+")");
	intRand = round(random()*3);
	for(r=0; r<intRand; r++) {
		run("Rotate 90 Degrees Right");
	}
	run(_TYPE);
	selectImage(gtImage);
	for(r=0; r<intRand; r++) {
		run("Rotate 90 Degrees Right");
	}
	roiManager("reset");
	run("Select None");
	print("nuclei-"+counter, nrOfNuclei);
}

