/**
  * MRI width measurement tool
  * 
  * Rotate the image so that the major axis of the object in the image is parallel to the horizontal axis.
  * Measure the width of a gap between cells where the gap is dark and the membranes of 
  * the cells or bright.
  *   
  * (c) 2019, INSERM
  * 
  * written by Volker Baecker at Montpellier Ressources Imagerie (www.mri.cnrs.fr)
 *
*/
var _TOLERANCE=2000;
var _DISPLAY_PLOT=true;

var helpURL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/MRI_Width_Measurement_Tool";

exit();

macro "width measurement tool help [f4]" {
	run('URL...', 'url='+helpURL);
}

macro "width measurement tool help (f4) Action Tool - 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"{
	run('URL...', 'url='+helpURL);
}

macro "rotate image (f5) Action Tool - C000T4b12r" {
	rotateImage();
}

macro "rotate image [f5]" {
	rotateImage();
}

macro "measure average width (f6) Action Tool - C000T4b12w" {
	measureAverageWidth();
}

macro "measure average width [f6]" {
	measureAverageWidth();
}

function rotateImage() {	
	width = getWidth();
	height = getHeight();
	maxDimension = maxOf(width, height);
	
	run("Set Measurements...", "area standard centroid center fit shape display redirect=None decimal=9");
	setAutoThreshold("Default dark");
	run("Create Selection");
	run("Measure");
	row = nResults-1;
	angle = getResult("Angle", row);
	run("Select None");
	run("Rotate... ", "angle="+angle+" grid=1 interpolation=Bilinear enlarge");
}


function measureAverageWidth() {
	Overlay.remove;
	if (!isOpen("average_width")) {
		Table.create("average_width");
		getLocationAndSize(x, y, width, height);
		Table.setLocationAndSize(x, y, 600, 400);
	}
	title = getTitle();
	averageWidth = getAverageWidth();
	selectWindow("average_width");
	row = Table.size;
	Table.set("image", row, title);
	Table.set("avg. width", row, averageWidth);
	Table.showRowNumbers(true);
	Table.update;
}

function getAverageWidth() {
	width = getWidth();
	title = getTitle();
	imageID = getImageID();
	maximaPositions = getMaximaPositions();
	Plot.getValues(xpoints, profile);
	if (!_DISPLAY_PLOT) run("Close");
	print("Image " + title);
	print("Maxima: ");
	Array.print(maximaPositions);
	delta=xpoints[1] - xpoints[0];
	first = firstDerivative(delta, profile);
	second = firstDerivative(delta, first);
	crossings = zeroCrossings(xpoints, second);	
	crossings = valuesBetween(crossings, maximaPositions[0], maximaPositions[1]);
	print("Inflection points: ");
	Array.print(crossings);
	averageDistance = abs(crossings[1]-crossings[0]);
	x1 = width/2.0;
	x2 = width/2.0;
	y1 = crossings[0];
	y2 = crossings[1];
	selectImage(imageID);
	a = 0;
	toUnscaled(a,y1);
	toUnscaled(a,y2);
	imageWidth = width;
	toUnscaled(imageWidth);
	makeLine(x1, y1, x2, y2, imageWidth);
	Overlay.addSelection;
	run("Select None");
	resetMinAndMax();
	run("Enhance Contrast", "saturated=0.35");
	return averageDistance;
}

function getMaximaPositions() {
	imageID = getImageID();
	result = newArray(2);
	width = getWidth();
	height = getHeight();
	x1 = width/2.0;
	x2 = width/2.0;
	y1 = 0;
	y2 = height;
	lineWidth = width;
	makeLine(x1, y1, x2, y2, lineWidth);
	run("Plot Profile");
	plotID = getImageID();
	Plot.getValues(xpoints, profile);
	selectImage(imageID);
	maxima = Array.findMaxima(profile, _TOLERANCE);
	middleIndex = profile.length / 2.0;
	maximaIndicesByMiddle = Array.copy(maxima);
	for (i = 0; i < maximaIndicesByMiddle.length; i++) {
		maximaIndicesByMiddle[i] = abs(maximaIndicesByMiddle[i] - middleIndex);
	}
	rankPositions = Array.rankPositions(maximaIndicesByMiddle);
	if (maximaIndicesByMiddle.length>=2) {
		result[0] = xpoints[maxima[rankPositions[0]]];
		result[1] = xpoints[maxima[rankPositions[1]]];
	}
	selectImage(plotID);
	return result;
}

function firstDerivative(delta, discreteCurve) {
	length = discreteCurve.length;
	derivative = newArray(length);
	if (discreteCurve.length<2) return derivative;
	derivative[0] = (discreteCurve[1]-discreteCurve[0]) / delta;
	derivative[length-1] = (discreteCurve[length-1]-discreteCurve[length-2]) / delta;
	for (i = 1; i < discreteCurve.length-1; i++) {
		derivative[i] = (discreteCurve[i+1]-discreteCurve[i-1]) / (2*delta);
	}
	return derivative;
}

function zeroCrossings(xpoints, discreteCurve) {
	crossings = newArray(0);
	deltaX = xpoints[1] - xpoints[0];
	for (i = 0; i < discreteCurve.length-1; i++) {
		if (discreteCurve[i] == 0) {
			crossings = Array.concat(crossings, xpoints[i]);
			continue;
		}
		if (discreteCurve[i]*discreteCurve[i+1]<0) {
			m = (discreteCurve[i+1] - discreteCurve[i]) / deltaX;
			b = discreteCurve[i] - (m * xpoints[i]);
			xIntercept = -b/m;
			crossings = Array.concat(crossings, xIntercept);
		}
	}
	return crossings;
}

function valuesBetween(values, min, max) {
	valuesInInterval = newArray(0);
	if (min>max) {
		tmp = min;
		min = max;
		max = tmp;
	}
	for (i = 0; i < values.length; i++) {
		if (values[i]>min && values[i]<max) {
			valuesInInterval = Array.concat(valuesInInterval, values[i]);
		}
	}
	return valuesInInterval;
}
