/**
  *  Tools to calculate the width-profile of an object given as a binary mask. 
  *  - calculate the width profile of the objext
  *    - as local thickness 
  *    - perpendicular to the axis of inertia
  *    - at regular distances using rays perpendicular to a centerline segment 
  *   
  *  (c) 2022, INSERM
  *  written  by Volker Baecker (INSERM) at Montpellier RIO Imaging (www.mri.cnrs.fr)
  * 
  **
*/

var _URL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/Width-Profile-Tools";

macro "Width Profile Tools Help Action Tool - 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" {
     run('URL...', 'url='+_URL);
}

macro "Local Thickness (f5) Action Tool - C000T4b12t" {
    runLocalThickness();
}

macro "Local Thickness (f5) Action Tool Options" {
    showLocalThicknessOptions();
}

macro "Local Thickness [f5]" {
    runLocalThickness();
}

macro "Perpendicular to inertia axis (f6) Action Tool - C000T4b12i" {
    runPerpendicularToInertiaAxis();
}

macro "Perpendicular to inertia axis (f6) Action Tool Options" {
    showPerpendicularToInertiaAxisOptions();
}

macro "Perpendicular to inertia axis [f6]" {
    runPerpendicularToInertiaAxis();
}

function showLocalThicknessOptions() {
    call("ij.Prefs.set", "mri.options.only", "true");
    run("width profile by local thickness");
    call("ij.Prefs.set", "mri.options.only", "false");   
}

function runLocalThickness() {
    call("ij.Prefs.set", "mri.options.only", "false");   
    if (File.exists(getOptionsPathWPLT())) {
        options = loadOptionsWPLT();
        run("width profile by local thickness", options);
    } else {
        run("width profile by local thickness");
    }   
}

function showPerpendicularToInertiaAxisOptions() {
    call("ij.Prefs.set", "mri.options.only", "true");
    run("width profile perpendicular to inertia axis");
    call("ij.Prefs.set", "mri.options.only", "false");   
}

function runPerpendicularToInertiaAxis() {
    call("ij.Prefs.set", "mri.options.only", "false");   
    if (File.exists(getOptionsPathPIA())) {
        options = loadOptionsPIA();
        run("width profile perpendicular to inertia axis", options);
    } else {
        run("width profile perpendicular to inertia axis");
    }   
}

function loadOptionsWPLT() {
    optionsPath = getOptionsPathWPLT();
    optionsString = File.openAsString(optionsPath);
    optionsString = replace(optionsString, "\n", "");
    return optionsString;
}

function getOptionsPathWPLT() {
    pluginsPath = getDirectory("plugins");
    optionsPath = pluginsPath + "Width-Profile-Tools/wplt-options.txt";
    return optionsPath;
}

function loadOptionsPIA() {
    optionsPath = getOptionsPathPIA();
    optionsString = File.openAsString(optionsPath);
    optionsString = replace(optionsString, "\n", "");
    return optionsString;
}

function getOptionsPathPIA() {
    pluginsPath = getDirectory("plugins");
    optionsPath = pluginsPath + "Width-Profile-Tools/wppia-options.txt";
    return optionsPath;
}